<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
  xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
  xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
  version="1">
  
  <!-- 
    Regression test for calibration
    
  -->
  
  <procedure xsi:type="apex:constantProcedureType">
    
    <parameters>
      <presentations>2</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      
    </trials>
  </procedure>
  
  <corrector xsi:type="apex:isequal"/>
    <!--type>isequal</type-->
  
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout height="2" width="3" id="main_layout">
        
        <button x="1" y="1" id="button1">
          <text>1</text>
        </button>
        
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens> 
  
  
  <datablocks>
    <uri_prefix>../stimuli</uri_prefix>
    <datablock id="rawdata1" >
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="rawdata2" >
      <device>wavdevice</device>
      <uri>wivineruis.wav</uri>
    </datablock>
    <datablock id="noisedata" >
      <device>wavdevice</device>
      <uri>wivineruis.wav</uri>
    </datablock>
    
  </datablocks>
  
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain id="wavgain">0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>

  <filters>
    <filter xsi:type="apex:amplifier" id="amp">
      <device>wavdevice</device>
      <channels>2</channels>
      <gain channel="0" id="left">6.0</gain>
      <gain channel="1" id="right">6.0</gain>
    </filter>
    <filter xsi:type="apex:dataloop" id="noisegen1">
      <device>wavdevice</device>
      <channels>1</channels>
      <continuous>true</continuous>
      <datablock>noisedata</datablock>
      <basegain>-16</basegain>
      <gain>0</gain>
      <randomjump>true</randomjump>
    </filter>
  </filters>

  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    
  </stimuli>

  <connections>
    <connection>
      <from>
        <id>rawdata1</id>
        <channel>0</channel>
      </from>
      <to>
        <id>amp</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>rawdata1</id>
        <channel>1</channel>
      </from>
      <to>
        <id>amp</id>
        <channel>1</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>rawdata2</id>
        <channel>0</channel>
      </from>
      <to>
        <id>amp</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>amp</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>amp</id>
        <channel>1</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>1</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>noisegen1</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>1</channel>
      </to>
    </connection>
  </connections>

  <!--calibration profile="profiel1">
    <stimulus id="stimulus1">
      <parameter targetloudness="80.0">wavgain</parameter>
    </stimulus>
    <stimulus id="stimulus2">
      <parameter targetloudness="75.0">left</parameter>
      <parameter targetloudness="75.0">right</parameter>
    </stimulus>
  </calibration-->
  
  <calibration profile="someprofile2">
    <stimuli>
      <stimulus id="stimulus1"/>
      <stimulus id="stimulus2"/>
    </stimuli>
    <parameters>
      <parameter id="left">
        <targetamplitude>80</targetamplitude>
        <mute>-150.0</mute>
      </parameter>
      <parameter id="right">
        <targetamplitude>80</targetamplitude>
        <mute>-150.0</mute>
      </parameter>
    </parameters>
  </calibration>
  
  
</apex:apex>