<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!--  @doc
 @what: The use of ALL connections
 @description: Monaural presentations of digit 1. Level is changed by clicking the buttons quieter and louder
 @how: Connections defines how the different datablocks and filters are routed to the output device
 -->
 <procedure xsi:type="apex:adaptiveProcedure">
  <parameters>
   <presentations>100</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
   <nUp>1</nUp>
   <nDown>1</nDown>
   <adapt_parameter>gain</adapt_parameter>
   <start_value>0</start_value>
   <stop_after_type>presentations</stop_after_type>
   <stop_after>100</stop_after>
   <larger_is_easier>true</larger_is_easier>
   <stepsizes>
    <stepsize begin="0" size="2"/>
   </stepsizes>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>up</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">false</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout height="1" id="main_layout" width="3">
    <button x="1" y="1" id="up">
     <text>quieter</text>
    </button>
    <button x="2" y="1" id="down">
     <text>louder</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="up"/>
    <button id="down"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata_stereo">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
  <datablock id="rawdata_mono">
   <device>wavdevice</device>
   <uri>wd1-mono.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device xsi:type="apex:wavDeviceType" id="wavdevice">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain id="gain">0</gain>
   <samplerate>44100</samplerate>
   <buffersize>4096</buffersize>
  </device>
 </devices>
 <filters/>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata_mono"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>_ALL_</id>
    <channel>0</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel>0</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>_ALL_</id>
    <channel>1</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel>1</channel>
   </to>
  </connection>
 </connections>
</apex:apex>
