<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
  xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
  xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment" version="1">
  <!-- 
  Regression test for hardware mixer using mme
  
  Result: attenuation of windows mixer changes according to adaptive procedure
  but only when the gain is inside the mixer's range
    
    -->
  <procedure xsi:type="apex:adaptiveProcedureType">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>mixergain</adapt_parameter>
      <start_value>4</start_value>
      <stop_after_type>presentations</stop_after_type>
      <stop_after>100</stop_after>
      <min_value>-150</min_value>
      <max_value>4</max_value>
      <larger_is_easier>false</larger_is_easier>
      <stepsizes>
        <stepsize begin="0" size="2"/>
      </stepsizes>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>up</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <corrector xsi:type="apex:isequal"/>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">false</feedback>
    </reinforcement>
    <screen id="screen1">

      <gridLayout height="1" width="3" id="main_layout">

        <button x="1" y="1" id="up">
          <text>louder</text>
        </button>
        <button x="2" y="1" id="down">
          <text>quieter</text>
        </button>
        
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="up"/>
        <button id="down"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <uri_prefix>../stimuli</uri_prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain id="gain">0</gain>
      <samplerate>44100</samplerate>
      <buffersize>4096</buffersize>
    </device>
    <device id="mixer" xsi:type="apex:soundcardmixer">
      <gain id="mixergain">0</gain>
      <type>mme</type>
    </device>
  </devices>
  <filters> </filters>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
