<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
 version="1">
  
  <!-- Generated by apexapi.pl -->
  
  <procedure xsi:type="apex:constantProcedureType">
      <parameters>
      <presentations>2</presentations>
      <skip>0</skip>
      <order>sequential</order>
     </parameters>
<trials>
			<trial id="trial0">
				<answer>bus</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus0" />
			</trial>
			<trial id="trial1">
				<answer>vaak</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus1" />
			</trial>
			<trial id="trial2">
				<answer>pen</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus2" />
			</trial>
			<trial id="trial3">
				<answer>leeg</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus3" />
			</trial>
			<trial id="trial4">
				<answer>dief</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus4" />
			</trial>
			<trial id="trial5">
				<answer>hoed</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus5" />
			</trial>
			<trial id="trial6">
				<answer>wip</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus6" />
			</trial>
			<trial id="trial7">
				<answer>mooi</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus7" />
			</trial>
			<trial id="trial8">
				<answer>kous</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus8" />
			</trial>
			<trial id="trial9">
				<answer>som</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus9" />
			</trial>
			<trial id="trial10">
				<answer>zang</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus10" />
			</trial>
			<trial id="trial11">
				<answer>bijl</answer>
				<screen id="screen1" />
        		<stimulus id="stimulus11" />
			</trial>
</trials>

   </procedure>	
   
   
<corrector xsi:type="apex:cvc">
	<language>Dutch</language>
</corrector>
	
	
 <screens>
 	<reinforcement>
 		<progressbar>true</progressbar>
 		<feedback length="300">true</feedback>
 	</reinforcement>
    <screen id="screen1" >
      <gridLayout height="2" width="1" id="main_layout">
	  	<label x="1" y="1" id="helptext">
			<text>Type what you hear</text>
		</label>
        <textEdit x="1" y="2" id="text" />
      </gridLayout>
	  <default_answer_element>text</default_answer_element>
    </screen>
  </screens>
  
  
	<datablocks>
	<uri_prefix>file:../../stimuli</uri_prefix>
			<datablock id="datablock0">
				<device>dev</device>
      			<uri>bus_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock1">
				<device>dev</device>
      			<uri>vaak_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock2">
				<device>dev</device>
      			<uri>pen_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock3">
				<device>dev</device>
      			<uri>leeg_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock4">
				<device>dev</device>
      			<uri>dief_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock5">
				<device>dev</device>
      			<uri>hoed_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock6">
				<device>dev</device>
      			<uri>wip_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock7">
				<device>dev</device>
      			<uri>mooi_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock8">
				<device>dev</device>
      			<uri>kous_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock9">
				<device>dev</device>
      			<uri>som_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock10">
				<device>dev</device>
      			<uri>zang_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
			<datablock id="datablock11">
				<device>dev</device>
      			<uri>bijl_unprocessed_SNR_0.0000.wav</uri>
			</datablock>
</datablocks>

<devices>
	<device id="dev" xsi:type="apex:wavDeviceType">
        <driver>portaudio</driver>
      	<card>default</card>
	  <channels>2</channels>
        <gain>0</gain>
          <samplerate>44100</samplerate>
        <buffersize>512</buffersize>

	</device>
</devices>

<filters/>

	<stimuli> 
<fixed_parameters/>
    <stimulus id="stimulus0">
      <description>Stimulus 0</description>
      <datablocks>
        <datablock id="datablock0"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus1">
      <description>Stimulus 1</description>
      <datablocks>
        <datablock id="datablock1"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Stimulus 2</description>
      <datablocks>
        <datablock id="datablock2"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus3">
      <description>Stimulus 3</description>
      <datablocks>
        <datablock id="datablock3"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus4">
      <description>Stimulus 4</description>
      <datablocks>
        <datablock id="datablock4"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus5">
      <description>Stimulus 5</description>
      <datablocks>
        <datablock id="datablock5"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus6">
      <description>Stimulus 6</description>
      <datablocks>
        <datablock id="datablock6"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus7">
      <description>Stimulus 7</description>
      <datablocks>
        <datablock id="datablock7"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus8">
      <description>Stimulus 8</description>
      <datablocks>
        <datablock id="datablock8"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus9">
      <description>Stimulus 9</description>
      <datablocks>
        <datablock id="datablock9"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus10">
      <description>Stimulus 10</description>
      <datablocks>
        <datablock id="datablock10"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
    <stimulus id="stimulus11">
      <description>Stimulus 11</description>
      <datablocks>
        <datablock id="datablock11"/>
      </datablocks>
      <variableParameters/>
<fixedParameters/>
    </stimulus>
</stimuli>

<connections/>

   
</apex:apex>
  
