<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
 version="1">

  <!--
	  shows extensive use of multiple datablocks
    + setting channel to -1 for the third row to make sure it's applied to all copies
  -->
  <procedure xsi:type="apex:trainingProcedureType">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>

      <order>sequential</order>
    </parameters>

    <trials>
      <trial id="trial1" >
        <answer>e</answer>
        <screen id="screen1" />
        <stimulus id="stimulus1" />
      </trial>
    </trials>
  </procedure>

  <corrector xsi:type="apex:isequal"/>

  <screens>
    <reinforcement>
      <progressbar>false</progressbar>
      <feedback>false</feedback>
    </reinforcement>
    <screen id="screen1" >


      <gridLayout height="5" width="4" id="answer_layout" x="1" y="2">
        <button x="1" y="2" id="l1">
          <text>seq</text>
        </button>
      </gridLayout>

      <buttongroup id="buttongroup1">
        <button id="l1"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>

  <datablocks>
    <uri_prefix>file:../stimuli</uri_prefix>
    <datablock id="rawdata1">
      <device>soundcard1</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="rawdata2">
      <device>soundcard1</device>
      <uri>wd2.wav</uri>
    </datablock>
    <datablock id="dummydata">
      <device>dummy</device>
      <uri>wivineruis.wav</uri>
    </datablock>
  </datablocks>

  <devices>
    <device id="soundcard1" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
       <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
    </device>
    <device id="dummy" xsi:type="apex:dummyDeviceType"/>
  </devices>

  <filters/>

  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1" >
      <description>blah</description>
      <datablocks>
        <simultaneous>
          <sequential>
            <datablock id="rawdata1" />
            <datablock id="rawdata2" />
          </sequential>
          <sequential>
            <datablock id="rawdata1"/>
            <datablock id="dummydata"/>
          </sequential>
        </simultaneous>

      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>


  <connections/>
      <!--connection>
      <from>
        <id>rawdata1</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard1</id>
        <channel>0</channel>
        </to>
      </connection>
      <connection>
        <from>
          <id>rawdata2</id>
          <channel>0</channel>
        </from>
        <to>
          <id>soundcard1</id>
          <channel>1</channel>
        </to>
      </connection>
      <connection>
        <from>
          <id>noisedata</id>
          <channel>0</channel>
        </from>
        <to>
          <id>soundcard1</id>
          <channel>1</channel>
      </to>
    </connection>
  </connections-->


</apex:apex>
