<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
  xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.3/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.3/experiment.xsd"
  xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.3/experiment"
  version="1">
  
  <!-- 
    Regression test for silence datablock
  -->
  
  <procedure xsi:type="apex:trainingProcedureType">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  
  <corrector xsi:type="apex:isequal"/>
  
  <screens>
    <screen id="screen1">
      <gridLayout height="2" width="3" id="main_layout">
        
        <button x="1" y="1" id="button1">
          <text>1</text>
        </button>
      </gridLayout>
      
      <buttongroup id="buttongroup1">
        <button id="button1"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens> 
  
  
  <datablocks>
    <uri_prefix>../stimuli</uri_prefix>
    <datablock id="rawdata1" >
      <device>wavdevice</device>
      <description>sample raw datablock</description>
      <uri>wd1.wav</uri>
    </datablock>
    <!--datablock id="silence1000">
      <device>wavdevice</device>
      <uri>silence:brol</uri>
    </datablock-->
    <datablock id="silence1000">
      <device>wavdevice</device>
      <uri>silence:1000</uri>
    </datablock>
     <datablock id="silence3">
      <device>wavdevice</device>
      <uri>silence:123.5</uri>
    </datablock>
    
  </datablocks>
  
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  
  <filters/>
  
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <sequential>
          <datablock id="silence1000"/>
          <datablock id="silence3"/>
        <datablock id="rawdata1"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
  </stimuli>
  
  <connections/>  
  
</apex:apex>