<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!-- @doc
  @what: Show amplifier default parameters
  @description: the stimulus wd1.wav is played in the left ear, when you click the button 'play with default parameters', the stimulus is played again with the same gain (=0) (10 trials)
  @how: fixed_parameters
 -->
 <procedure xsi:type="apex:trainingProcedure">
  <parameters>
   <presentations>10</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <screen id="screen1">
   <gridLayout height="2" id="main_layout" width="3">
    <button id="button1" x="1" y="1">
     <text>play with default parameters</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <description>sample raw datablock</description>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
  </device>
 </devices>
 <filters>
  <filter id="ampli" xsi:type="apex:amplifier">
   <device>wavdevice</device>
   <channels>1</channels>
   <basegain>0</basegain>
   <gain>0</gain>
  </filter>
 </filters>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <datablocks>
    <simultaneous>
     <datablock id="rawdata1"/>
    </simultaneous>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>rawdata1</id>
    <channel>0</channel>
   </from>
   <to>
    <id>ampli</id>
    <channel>0</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>ampli</id>
    <channel>0</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel>0</channel>
   </to>
  </connection>
 </connections>
</apex:apex>
