<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!-- @doc
    @what: Example using the matlabfilter plugin.
    @description:  The plugin will use matlab to process data, one buffer at a time. Note that you should make sure your system can find the Matlab eng library.
    On Linux you can do this by adding the <matlab>/bin/glnx86 directory to your library load path (either changing /etc/ld.so.conf or starting apex using  LD_LIBRARY_PATH=/usr/lib:<matlab>/bin/glnx86 apex3. Note that putting /usr/lib first is required because matlab includes a wrong versionof the Qt libraries.
    On windows you can put the relevant matlab path in your system path.
    @how: <plugin>matlabfilter</plugin> in <filters>.
  -->
 <procedure xsi:type="apex:adaptiveProcedure">
  <parameters>
   <presentations>100</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
   <nUp>1</nUp>
   <nDown>1</nDown>
   <adapt_parameter>gain</adapt_parameter>
   <start_value>0</start_value>
   <stop_after_type>presentations</stop_after_type>
   <stop_after>100</stop_after>
   <larger_is_easier>false</larger_is_easier>
   <stepsizes>
    <stepsize begin="0" size="5"/>
   </stepsizes>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>up</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">false</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout width="3" id="main_layout" height="1">
    <button x="1" y="1" id="up">
     <text>louder</text>
    </button>
    <button x="2" y="1" id="down">
     <text>quieter</text>
    </button>
    <parameterlist x="3" y="1" id="pl">
     <parameter>gain</parameter>
    </parameterlist>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="up"/>
    <button id="down"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device xsi:type="apex:wavDeviceType" id="wavdevice">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>4096</buffersize>
  </device>
 </devices>
 <filters>
  <filter xsi:type="apex:pluginfilter" id="pluginfilter">
   <device>wavdevice</device>
   <channels>1</channels>
   <plugin>matlabfilter</plugin>
   <parameter name="matlabpath">/usr/local/matlab2009a</parameter>
   <parameter name="processfunction">amplify</parameter>
   <parameter name="preparefunction">amplify_prepare</parameter>
   <parameter id="gain" name="gain">0</parameter>
  </filter>
 </filters>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>_ALL_</id>
    <channel>0</channel>
   </from>
   <to>
    <id>pluginfilter</id>
    <channel>0</channel>
   </to>
  </connection>
  <!--connection>
      <from>
        <id>_ALL_</id>
        <channel>1</channel>
      </from>
      <to>
        <id>pluginfilter</id>
        <channel>1</channel>
      </to>
    </connection-->
  <connection>
   <from>
    <id>pluginfilter</id>
    <channel>0</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel>0</channel>
   </to>
  </connection>
  <!--connection>
      <from>
        <id>pluginfilter</id>
        <channel>1</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>1</channel>
      </to>
    </connection-->
 </connections>
</apex:apex>
