<?xml version='1.0' encoding='UTF-8'?>
 <apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
  <!-- @doc
  @what:        Shows synchronisation  using a soundcard pulse
  @description: When you click on 'play with default parameters', a pulse is presented in your left ear simultaneously with a stimulus (wd1.wav - een/one)
  @how: datablock/stimulus + filter: generator makes a soundcard pulse (negative polarity)
-->
 <procedure xsi:type="apex:trainingProcedure">
  <parameters>
   <presentations>100</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <screen id="screen1">
   <gridLayout height="2" width="3" id="main_layout">
    <button id="button1" x="1" y="1">
     <text>play with default parameters</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <description>sample raw datablock</description>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
  </device>
 </devices>
 <filters>
  <filter id="generator" xsi:type="apex:generator">
   <device>wavdevice</device>
   <channels>1</channels>
   <type>singlepulse</type>
   <basegain>0</basegain>
   <gain>0</gain>
   <frequency>0</frequency>
   <phase>0</phase>
   <pulsewidth>20</pulsewidth>
   <polarity>negative</polarity>
  </filter>
 </filters>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <datablocks>
    <simultaneous>
     <datablock id="rawdata1"/>
    </simultaneous>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>_ALL_</id>
    <channel>0</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel>0</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>generator</id>
    <channel>0</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel>0</channel>
   </to>
  </connection>
 </connections>
</apex:apex>
