<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!-- @doc
  @what:        Shows synchronisation for L34 using a soundcard pulse with a negative polarity (filter - pulsegen)
  @description: When you click on send, a pulse is presented in your left ear and a stimulus (datablock: _Input44_2.wav) is presented in your right ear
  @how: filters: generator makes a soundcard pulse with a negative polarity
-->
 <procedure xsi:type="apex:trainingProcedure">
  <parameters>
   <presentations>100</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">false</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout height="1" width="2">
    <button id="button1" x="2" y="1">
     <text>Send</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli/</uri_prefix>
  <datablock id="rawdata1">
   <device>soundcard</device>
   <uri>_Input44_2.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device id="soundcard" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>2048</buffersize>
  </device>
 </devices>
 <filters>
  <filter id="pulsegen" xsi:type="apex:generator">
   <device>soundcard</device>
   <channels>1</channels>
   <continuous>false</continuous>
   <type>singlepulse</type>
   <basegain>0</basegain>
   <gain>0</gain>
   <frequency>0</frequency>
   <phase>0</phase>
   <pulsewidth>2</pulsewidth>
   <polarity>negative</polarity>
  </filter>
 </filters>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>pulsegen</id>
    <channel>0</channel>
   </from>
   <to>
    <id>soundcard</id>
    <channel>0</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>rawdata1</id>
    <channel>0</channel>
   </from>
   <to>
    <id>soundcard</id>
    <channel>1</channel>
   </to>
  </connection>
 </connections>
</apex:apex>
