<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.3/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.3/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.3/experiment"
 version="1">

<!--
Test of setting frequency parameter of sine generator
  One button for 100Hz and one for 1000Hz
-->
  <procedure xsi:type="apex:trainingProcedureType">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>

    <trials>
      <trial id="trial100" >
        <answer>b100</answer>
        <screen id="screen1" />
        <stimulus id="s100" />
      </trial>
      <trial id="trial1000" >
        <answer>b1000</answer>
        <screen id="screen1" />
        <stimulus id="s1000" />
      </trial>
      <trial id="trialdef" >
        <answer>bdef</answer>
        <screen id="screen1" />
        <stimulus id="sdef" />
      </trial>
    </trials>
  </procedure>

  <corrector xsi:type="apex:isequal"/>

  <screens>
    <reinforcement>
      <progressbar>false</progressbar>
      <feedback>false</feedback>
    </reinforcement>

    <screen id="screen1" >
      <gridLayout height="2" width="2" id="answer_layout" x="1" y="2">
        <button x="1" y="1" id="b100">
          <text>100Hz</text>
        </button>
        <button x="2" y="1" id="b1000">
          <text>1000Hz</text>
        </button>
        <button x="2" y="2" id="bdef">
          <text>defaults</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="b100"/>
        <button id="b1000"/>
        <button id="bdef"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>

  <datablocks>
    <uri_prefix>file:../stimuli</uri_prefix>
    <datablock id="silence">
      <device>soundcard1</device>
      <uri>silence:1000</uri>
    </datablock>
  </datablocks>

  <devices>
    <device id="soundcard1" xsi:type="apex:wavDeviceType">
       <driver>portaudio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
    </device>
  </devices>

  <filters>
    <filter xsi:type="apex:generator" id="singen1">
      <device>soundcard1</device>
      <channels>1</channels>
      <continuous>false</continuous>
      <type>sinus</type>
      <basegain>-14</basegain>
      <gain id="gain">0</gain>
      <frequency id="freq">10000</frequency>
      <phase>0</phase>
    </filter>
  </filters>

  <stimuli>
    <fixed_parameters/>
    <stimulus id="s100" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <sequential>
          <datablock id="silence" />
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="gain">-3</parameter>
        <parameter id="freq">100</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="s1000" >
      <description>silence</description>
      <datablocks>
        <sequential>
          <datablock id="silence" />
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="gain">-6</parameter>
        <parameter id="freq">1000</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="sdef" >
      <description>silence</description>
      <datablocks>
        <sequential>
          <datablock id="silence" />
        </sequential>
      </datablocks>
      <variableParameters>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
  </stimuli>


  <connections>
    <connection>
      <from>
        <id>_ALL_</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard1</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>singen1</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard1</id>
        <channel>0</channel>
      </to>
    </connection>
  </connections>

</apex:apex>
