<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
  xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
  xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
  version="1">

  <!--
    Regression test for fader
  -->

  <procedure xsi:type="apex:trainingProcedureType">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>

    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>button2</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus2"/>
      </trial>
    </trials>
  </procedure>

  <corrector xsi:type="apex:isequal"/>

  <screens>
    <screen id="screen1">
      <gridLayout height="2" width="3" id="main_layout">

        <button x="1" y="1" id="button1">
          <text>play fade</text>
        </button>
        
        <button x="2" y="1" id="button2">
          <text>play NO fade</text>
        </button>

      </gridLayout>

      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>


  <datablocks>
    <uri_prefix>../stimuli</uri_prefix>
    <datablock id="rawdata1" >
      <device>wavdevice</device>
      <description>sample raw datablock</description>
      <uri>sine.wav</uri>
    </datablock>
  </datablocks>

  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
      <channels>1</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
    </device>
  </devices>

  <filters>
    <filter id="fader" xsi:type="apex:fader">
      <device>wavdevice</device>
      <channels>1</channels>
      <length id="fadelen">200</length>
      <type>cosine</type>
      <direction>in</direction>
    </filter>
  </filters>

  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters>
        <parameter id="fadelen">200</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters>
        <parameter id="fadelen">0</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>


  </stimuli>

  <connections>
    <connection>
      <from>
        <id>rawdata1</id>
        <channel>0</channel>
      </from>
      <to>
        <id>fader</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>fader</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>0</channel>
      </to>
    </connection>
  </connections>

</apex:apex>