<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
  xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.3/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.3/experiment.xsd"
  xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.3/experiment"
  version="1">
  
  <!-- 
    Regression test for <general><exitafter>
  -->
  
  <procedure xsi:type="apex:constantProcedureType">
    
    <parameters>
      <presentations>1</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>button2</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus2"/>
      </trial>
    </trials>
  </procedure>
  
  <corrector xsi:type="apex:isequal"/>
 
  
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout height="2" width="3" id="main_layout">
        
        <button x="1" y="1" id="button1">
          <text>1</text>
        </button>
        
        <button x="2" y="1" id="button2">
          <text>2</text>
        </button>
        
        <button x="3" y="1" id="button3">
          <text>3</text>
        </button>
        
        <button x="1" y="2" id="button4">
          <text>4</text>
        </button>
        
        <button x="2" y="2" id="button5">
          <text>5</text>
        </button>
        
        <button x="3" y="2" id="button6">
          <text>6</text>
        </button>
        
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
        <button id="button4"/>
        <button id="button5"/>
        <button id="button6"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens> 
  
  
  <datablocks>
    <uri_prefix>../stimuli</uri_prefix>
    <datablock id="rawdata1" >
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="rawdata2" >
      <device>wavdevice</device>
      <uri>wd2.wav</uri>
    </datablock>
    <datablock id="rawdata3" >
      <device>wavdevice</device>
      <uri>wd3.wav</uri>
    </datablock>
    <datablock id="rawdata4" >
      <device>wavdevice</device>
      <uri>wd4.wav</uri>
    </datablock>
    <datablock id="rawdata5">
      <device>wavdevice</device>
      <uri>wd5.wav</uri>
    </datablock>
    <datablock id="rawdata6">
      <device>wavdevice</device>
      <uri>wd6.wav</uri>
    </datablock>
  </datablocks>
  
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  
  <filters/>
  
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    <stimulus id="stimulus3">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    <stimulus id="stimulus4">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata4"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>  
    
    <stimulus id="stimulus5">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata5"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    <stimulus id="stimulus6">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata6"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
  </stimuli>
  
  <connections/>  
  
  <interactive>
    <entry type="string" description="subject ID" default=""/>
    <entry type="int" description="output gain" expression="apex:apex/devices/device/gain" default="0"/>
    <entry type="int" description="presentations" expression="apex:apex/procedure/parameters/presentations" default="2"/>
    <entry type="string" description="invalid" expression="invalid" default="invalid" />
    <entry type="string" description="No Expression"  default="" />
    <entry type="int" description="feedback length" expression="apex:apex/screens/reinforcement/feedback/@length" default="300"/>
    <entry type="string" description="button 1 text" expression="apex:apex/screens/screen/gridLayout/button[1]/text" default="knop 1"/>
    <entry type="combo" description="button 2 text" expression="apex:apex/screens/screen/gridLayout/button[2]/text" default="A|B|Etc"/>
  </interactive>
  
</apex:apex>
