<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!-- @doc
  @what:        Shows synchronisation for L34 using a soundcard pulse
  @description:         2 channels of stereo file are mixed into output ch 0, the pulse goes to ch 1
  @how: use dummyDeviceType and wavDeviceType and check connections
    -->
 <procedure xsi:type="apex:trainingProcedure">
  <parameters>
   <presentations>100</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <screen id="screen1">
   <gridLayout height="1" width="2">
    <button id="button1" x="2" y="1">
     <text>Send</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli/</uri_prefix>
  <datablock id="rawdata1">
   <device>soundcard</device>
   <uri>click.wav</uri>
  </datablock>
  <datablock id="l34data">
   <device>l34</device>
   <uri>10pulses+powerup-ch1.qic</uri>
  </datablock>
  <datablock id="waitforl34">
   <device>soundcard</device>
   <uri>silence:566.4</uri>
  </datablock>
 </datablocks>
 <devices>
  <master>soundcard</master>
  <device id="soundcard" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>2048</buffersize>
   <padzero>4</padzero>
  </device>
  <device id="l34" xsi:type="apex:L34DeviceType">
   <device_id>1</device_id>
   <implant>cic3</implant>
   <trigger>in</trigger>
   <defaultmap>
    <inline>
     <number_electrodes>3</number_electrodes>
     <mode>MP1+2</mode>
     <pulsewidth>25</pulsewidth>
     <pulsegap>8</pulsegap>
     <period>138</period>
     <channel electrode="1" comfort="255" threshold="1" number="1"/>
     <channel electrode="2" comfort="255" threshold="1" number="2"/>
     <channel electrode="3" comfort="255" threshold="1" number="3"/>
     <channel electrode="4" comfort="255" threshold="1" number="4"/>
     <channel electrode="5" comfort="255" threshold="1" number="5"/>
     <channel electrode="6" comfort="255" threshold="1" number="6"/>
     <channel electrode="7" comfort="255" threshold="1" number="7"/>
     <channel electrode="8" comfort="255" threshold="1" number="8"/>
     <channel electrode="9" comfort="255" threshold="1" number="9"/>
     <channel electrode="10" comfort="255" threshold="1" number="10"/>
     <channel electrode="11" comfort="255" threshold="1" number="11"/>
     <channel electrode="12" comfort="255" threshold="1" number="12"/>
     <channel electrode="13" comfort="255" threshold="1" number="13"/>
     <channel electrode="14" comfort="255" threshold="1" number="14"/>
     <channel electrode="15" comfort="255" threshold="1" number="15"/>
     <channel electrode="16" comfort="255" threshold="1" number="16"/>
     <channel electrode="17" comfort="255" threshold="1" number="17"/>
     <channel electrode="18" comfort="255" threshold="1" number="18"/>
     <channel electrode="19" comfort="255" threshold="1" number="19"/>
     <channel electrode="20" comfort="255" threshold="1" number="20"/>
     <channel electrode="21" comfort="255" threshold="1" number="21"/>
     <channel electrode="22" comfort="255" threshold="1" number="22"/>
    </inline>
   </defaultmap>
  </device>
 </devices>
 <filters>
  <filter id="pulsegen" xsi:type="apex:generator">
   <device>soundcard</device>
   <channels>1</channels>
   <continuous>false</continuous>
   <type>singlepulse</type>
   <basegain>0</basegain>
   <gain>0</gain>
   <frequency>0</frequency>
   <phase>0</phase>
   <pulsewidth>10</pulsewidth>
  </filter>
 </filters>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <simultaneous>
     <sequential>
      <datablock id="waitforl34"/>
      <datablock id="rawdata1"/>
     </sequential>
     <datablock id="l34data"/>
    </simultaneous>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>pulsegen</id>
    <channel>0</channel>
   </from>
   <to>
    <id>soundcard</id>
    <channel>0</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>rawdata1</id>
    <channel>0</channel>
   </from>
   <to>
    <id>soundcard</id>
    <channel>1</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>waitforl34</id>
    <channel>0</channel>
   </from>
   <to>
    <id>soundcard</id>
    <channel>1</channel>
   </to>
  </connection>
 </connections>
</apex:apex>
