<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
 version="1">
  
  <!-- 
Test of syncrhonized bilateral setup
    -->
    
  <procedure xsi:type="apex:trainingProcedureType">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      <trial id="trial1" >
        <answer>first</answer>
        <screen id="screen1" />
        <stimulus id="stim1" />
      </trial>
      <trial id="trial2" >
        <answer>second</answer>
        <screen id="screen1" />
        <stimulus id="stim2" />
      </trial>
      <trial id="trial3" >
        <answer>both</answer>
        <screen id="screen1" />
        <stimulus id="stim12" />
      </trial>
      
    </trials>
  </procedure>
  
  
    <corrector xsi:type="apex:isequal"/>
      
    
    <screens>
      <screen id="screen1" >
        <gridLayout height="1" width="3" id="main_layout">
          
          <button x="1" y="1" id="first" >
            <text>first</text>
          </button>
          
          <button x="2" y="1" id="second" >
            <text>second</text>
          </button>

          <button x="3" y="1" id="both" >
            <text>both</text>
          </button>
          
        </gridLayout>
        <buttongroup id="buttongroup1">
          <button id="first"/>
          <button id="second"/>
    	    <button id="both"/>
        </buttongroup>
        <default_answer_element>buttongroup1</default_answer_element>
        
      </screen>
    </screens>
    
  
 <datablocks>
   <uri_prefix>../stimuli/</uri_prefix>
    <datablock id="elecdata1" >
      <device>l34-1</device>
      <description>sample raw l34 datablock</description>
      <uri>10pulses+powerup-ch1.qic</uri>
    </datablock>
   <datablock id="elecdata2" >
     <device>l34-2</device>
     <description>sample raw l34 datablock</description>
     <uri>10pulses+powerup-ch1.qic</uri>
   </datablock>
   
   <!--datablock id="rawdata2" >
     <device>l34device</device>
     <description>sample raw l34 datablock</description>
     <uri>fadechan.qic</uri>
   </datablock>
   <datablock id="rawdata3" >
     <device>l34device</device>
     <description>[0-255] on every channel, per channel</description>
     <uri>fadechan-single.qic</uri>
   </datablock-->
   
</datablocks>

  <devices>
  <master>l34-1</master>
    <device id="l34-1"  xsi:type="apex:L34DeviceType">
      <device_id>1</device_id>
      <implant>cic3</implant>
      <trigger>out</trigger>

      <defaultmap>
        <inline>
           <number_electrodes>3</number_electrodes>
          <mode>MP1+2</mode>
          <pulsewidth>25</pulsewidth>
          <pulsegap>8</pulsegap>
          <period>140</period>
          <channel number="1" electrode="22" threshold="1" comfort="255"/>
          <channel number="2" electrode="21" threshold="1" comfort="255"/>
          <channel number="3" electrode="20" threshold="1" comfort="255"/>
          <channel number="4" electrode="19" threshold="1" comfort="255"/>
          <channel number="5" electrode="18" threshold="1" comfort="255"/>
          <channel number="6" electrode="17" threshold="1" comfort="255"/>
          <channel number="7" electrode="16" threshold="1" comfort="255"/>
          <channel number="8" electrode="15" threshold="1" comfort="255"/>
          <channel number="9" electrode="14" threshold="1" comfort="255"/>
          <channel number="10" electrode="13" threshold="1" comfort="255"/>
          <channel number="11" electrode="12" threshold="1" comfort="255"/>
          <channel number="12" electrode="11" threshold="1" comfort="255"/>
          <channel number="13" electrode="10" threshold="1" comfort="255"/>
          <channel number="14" electrode="9" threshold="1" comfort="255"/>
          <channel number="15" electrode="8" threshold="1" comfort="255"/>
          <channel number="16" electrode="7" threshold="1" comfort="255"/>
          <channel number="17" electrode="6" threshold="1" comfort="255"/>
          <channel number="18" electrode="5" threshold="1" comfort="255"/>
          <channel number="19" electrode="4" threshold="1" comfort="255"/>
          <channel number="20" electrode="3" threshold="1" comfort="255"/>
          <channel number="21" electrode="2" threshold="1" comfort="255"/>
          <channel number="22" electrode="1" threshold="1" comfort="255"/>
        </inline>
      </defaultmap>
    </device>
    
    <device id="l34-2"  xsi:type="apex:L34DeviceType">
      <device_id>2</device_id>
      <implant>cic3</implant>
      <trigger>in</trigger>
      
      <defaultmap>
        <inline>
          <number_electrodes>3</number_electrodes>
          <mode>MP1+2</mode>
          <pulsewidth>25</pulsewidth>
          <pulsegap>8</pulsegap>
          <period>140</period>
          <channel number="1" electrode="10" threshold="1" comfort="255"/>
          <channel number="2" electrode="21" threshold="1" comfort="255"/>
          <channel number="3" electrode="20" threshold="1" comfort="255"/>
          <channel number="4" electrode="19" threshold="1" comfort="255"/>
          <channel number="5" electrode="18" threshold="1" comfort="255"/>
          <channel number="6" electrode="17" threshold="1" comfort="255"/>
          <channel number="7" electrode="16" threshold="1" comfort="255"/>
          <channel number="8" electrode="15" threshold="1" comfort="255"/>
          <channel number="9" electrode="14" threshold="1" comfort="255"/>
          <channel number="10" electrode="13" threshold="1" comfort="255"/>
          <channel number="11" electrode="12" threshold="1" comfort="255"/>
          <channel number="12" electrode="11" threshold="1" comfort="255"/>
          <channel number="13" electrode="1" threshold="1" comfort="255"/>
          <channel number="14" electrode="9" threshold="1" comfort="255"/>
          <channel number="15" electrode="8" threshold="1" comfort="255"/>
          <channel number="16" electrode="7" threshold="1" comfort="255"/>
          <channel number="17" electrode="6" threshold="1" comfort="255"/>
          <channel number="18" electrode="5" threshold="1" comfort="255"/>
          <channel number="19" electrode="4" threshold="1" comfort="255"/>
          <channel number="20" electrode="3" threshold="1" comfort="255"/>
          <channel number="21" electrode="2" threshold="1" comfort="255"/>
          <channel number="22" electrode="1" threshold="1" comfort="255"/>
        </inline>
      </defaultmap>
    </device>
  </devices>
  
  <filters>
  </filters>
  

  
  <stimuli>
      <fixed_parameters/>
    <stimulus id="stim1" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="elecdata1" />
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stim2" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="elecdata2" />
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stim12" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <simultaneous>
          <datablock id="elecdata1" />
          <datablock id="elecdata2" />
        </simultaneous>

      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
  </stimuli>

  
  <!--connections>
    <connection>
      <from>
        <id>elecdata1</id>
        <channel>0</channel>
      </from>
      <to>
        <id>l34-1</id>
        <channel>0</channel>
      </to>
    </connection>
    
  </connections-->
  
 
  
   
</apex:apex>
