<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
 version="1">
  
  <!-- 
	See if Mapwizard works ;-]
    -->
    
  <procedure xsi:type="apex:trainingProcedureType">
    <parameters>
      <presentations>1</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      <trial id="trial1" >
        <answer>button1</answer>
        <screen id="screen1" />
        <stimulus id="stimulus1" />
      </trial>
      
      <trial id="trial2" >
        <answer>button2</answer>
        <screen id="screen1" />
        <stimulus id="stimulus2" />
      </trial>
      
    </trials>
  </procedure>  
  
    <corrector xsi:type="apex:isequal"/>
      
    
    <screens>
      <screen id="screen1" >
        <gridLayout height="2" width="3" id="main_layout">
          
          <button x="1" y="1" id="button1" >
            <text>fadein.qic</text>
          </button>
          
          <button x="2" y="1" id="button2" >
            <text>fadechan-single.qic</text>
          </button>
          
        </gridLayout>
        <buttongroup id="buttongroup1">
          <button id="button1"/>
          <button id="button2"/>
        </buttongroup>
        <default_answer_element>buttongroup1</default_answer_element>
      </screen>
    </screens>
    
  
 <datablocks>
   <uri_prefix>../stimuli/</uri_prefix>
  
   <datablock id="rawdata1" >
     <device>l34device</device>
     <uri>fadein.qic</uri>
   </datablock>
   
   <datablock id="rawdata2" >
     <device>l34device</device>
     <uri>fadechan-single.qic</uri>
   </datablock>
   
</datablocks>

  <devices>
    <device id="l34device" xsi:type="apex:L34DeviceType">
      <device_id>0</device_id>
      <implant>cic3</implant>
    <trigger>none</trigger>      
        
      <defaultmap>
        <from_r126>
        </from_r126>
      </defaultmap>
    </device>
  </devices>
  
  <filters>
  </filters>
  

  
  <stimuli>
      <fixed_parameters/>
    <stimulus id="stimulus1" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1" />
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus2" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2" />
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
  </stimuli>

  <connections/>
  
 
  
   
</apex:apex>
