<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.3/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.3/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.3/experiment"
 version="1">
  
  <!-- 
Send simple XML file to L34 device
    -->
    
  <procedure xsi:type="apex:trainingProcedureType">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      <trial id="trial1" >
        <answer>button10</answer>
        <screen id="screen1" />
        <stimulus id="stimulus10" />
      </trial>
      <trial id="trial2" >
        <answer>button50</answer>
        <screen id="screen1" />
        <stimulus id="stimulus50" />
      </trial>
      <trial id="trial3" >
        <answer>button70</answer>
        <screen id="screen1" />
        <stimulus id="stimulus70" />
      </trial>
      <trial id="trial4" >
        <answer>button100</answer>
        <screen id="screen1" />
        <stimulus id="stimulusdefault" />
      </trial>
      
    </trials>
  </procedure>
  
  
    <corrector xsi:type="apex:isequal"/>
      
    
    <screens>
      <screen id="screen1" >
        <gridLayout height="2" width="3" id="main_layout">
          
          <button x="1" y="1" id="button10" >
            <text>Volume 10</text>
          </button>
          
          <button x="1" y="2" id="button50" >
            <text>Volume 50</text>
          </button>
          
          <button x="2" y="1" id="button70" >
	    <text>Volume 70</text>
          </button>

          <button x="2" y="2" id="button100" >
            <text>Default volume (100)</text>
          </button>
          
          
          
        </gridLayout>
        <buttongroup id="buttongroup1">
          <button id="button10"/>
          <button id="button50"/>
	  <button id="button70"/>
	   <button id="button100"/>
        </buttongroup>
        <default_answer_element>buttongroup1</default_answer_element>
        
      </screen>
    </screens>
    
  
 <datablocks>
   <uri_prefix>../stimuli/</uri_prefix>

   <datablock id="fadechan" >
     <device>l34device</device>
     <description>[0-255] on every channel, per channel</description>
     <uri>fadechan-single.qic</uri>
   </datablock>
    <datablock id="d10pulses" >
     <device>l34device</device>
     <uri>10pulses+powerup-ch1.qic</uri>
   </datablock>

</datablocks>

  <devices>
    <device id="l34device"  xsi:type="apex:L34DeviceType">
      <device_id>1</device_id>
      <implant>cic3</implant>
      <trigger>none</trigger>
      <volume id="l34volume">100</volume>

      <defaultmap>
        <inline>
           <number_electrodes>3</number_electrodes>
          <mode>MP1+2</mode>
          <pulsewidth>25</pulsewidth>
          <pulsegap>8</pulsegap>
          <period>200</period>
          <channel number="1" electrode="1" threshold="1" comfort="255"/>
          <channel number="2" electrode="2" threshold="1" comfort="255"/>
          <channel number="3" electrode="3" threshold="1" comfort="255"/>
          <channel number="4" electrode="4" threshold="1" comfort="255"/>
          <channel number="5" electrode="5" threshold="1" comfort="255"/>
          <channel number="6" electrode="6" threshold="1" comfort="255"/>
          <channel number="7" electrode="7" threshold="1" comfort="255"/>
          <channel number="8" electrode="8" threshold="1" comfort="255"/>
          <channel number="9" electrode="9" threshold="1" comfort="255"/>
          <channel number="10" electrode="10" threshold="1" comfort="255"/>
          <channel number="11" electrode="11" threshold="1" comfort="255"/>
          <channel number="12" electrode="12" threshold="1" comfort="255"/>
          <channel number="13" electrode="13" threshold="1" comfort="255"/>
          <channel number="14" electrode="14" threshold="1" comfort="255"/>
          <channel number="15" electrode="15" threshold="1" comfort="255"/>
          <channel number="16" electrode="16" threshold="1" comfort="255"/>
          <channel number="17" electrode="17" threshold="1" comfort="255"/>
          <channel number="18" electrode="18" threshold="1" comfort="255"/>
          <channel number="19" electrode="19" threshold="1" comfort="255"/>
          <channel number="20" electrode="20" threshold="1" comfort="255"/>
          <channel number="21" electrode="21" threshold="1" comfort="255"/>
          <channel number="22" electrode="22" threshold="1" comfort="255"/>
        </inline>
      </defaultmap>
    </device>
  </devices>
  
  <filters>
  </filters>
  

  
  <stimuli>
      <fixed_parameters/>
    <stimulus id="stimulus10" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="d10pulses" />
      </datablocks>
      <variableParameters>
        <parameter id="l34volume">10</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus50" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="d10pulses" />
      </datablocks>
      <variableParameters>
        <parameter id="l34volume">50</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus70" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="d10pulses" />
      </datablocks>
      <variableParameters>
        <parameter id="l34volume">70</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulusdefault" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="d10pulses" />
      </datablocks>
      <variableParameters>
        
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    
  </stimuli>

  <connections/>
  
 
  
   
</apex:apex>
