<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.0/experiment" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.0/experiment.xsd">
  <!-- @doc
  @what:
  @description:
  @how:
    -->
  <!--
Send simple XML file to L34 device
    -->
  <procedure xsi:type="apex:trainingProcedure">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>button2</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus2"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <screen id="screen1">
      <gridLayout width="3" height="2" id="main_layout">
        <button id="button1" x="1" y="1">
          <text>vuil.aseq</text>
        </button>
        <button id="button2" x="2" y="1">
          <text>roos.aseq</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli/</prefix>
    <datablock id="rawdata1">
      <device>l34device</device>
      <description>sample raw l34 datablock</description>
      <file>vuil.aseq</file>
    </datablock>
    <datablock id="rawdata2">
      <device>l34device</device>
      <description>sample raw l34 datablock</description>
      <file>roos.aseq</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:CohDeviceType" id="l34device">
      <device>L34-cic3-1</device>
      <trigger>none</trigger>
      <defaultmap>
        <inline>
          <number_electrodes>3</number_electrodes>
          <mode>MP1+2</mode>
          <pulsewidth>25</pulsewidth>
          <pulsegap>8</pulsegap>
          <period>1000</period>
          <channel number="1" comfort="255" electrode="1" threshold="1"/>
          <channel number="2" comfort="255" electrode="2" threshold="1"/>
          <channel number="3" comfort="255" electrode="3" threshold="1"/>
          <channel number="4" comfort="255" electrode="4" threshold="1"/>
          <channel number="5" comfort="255" electrode="5" threshold="1"/>
          <channel number="6" comfort="255" electrode="6" threshold="1"/>
          <channel number="7" comfort="255" electrode="7" threshold="1"/>
          <channel number="8" comfort="255" electrode="8" threshold="1"/>
          <channel number="9" comfort="255" electrode="9" threshold="1"/>
          <channel number="10" comfort="255" electrode="10" threshold="1"/>
          <channel number="11" comfort="255" electrode="11" threshold="1"/>
          <channel number="12" comfort="255" electrode="12" threshold="1"/>
          <channel number="13" comfort="255" electrode="13" threshold="1"/>
          <channel number="14" comfort="255" electrode="14" threshold="1"/>
          <channel number="15" comfort="255" electrode="15" threshold="1"/>
          <channel number="16" comfort="255" electrode="16" threshold="1"/>
          <channel number="17" comfort="255" electrode="17" threshold="1"/>
          <channel number="18" comfort="255" electrode="18" threshold="1"/>
          <channel number="19" comfort="255" electrode="19" threshold="1"/>
          <channel number="20" comfort="255" electrode="20" threshold="1"/>
          <channel number="21" comfort="0" electrode="21" threshold="0"/>
          <channel number="22" comfort="0" electrode="22" threshold="0"/>
        </inline>
      </defaultmap>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
