<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://www.kuleuven.be/exporl/Lab/Apex ../../../../Checkouts/apex3/trunk/apex/schemas/apex-schema.xsd"
 xmlns:apex="http://www.kuleuven.be/exporl/Lab/Apex"
 version="1">
     <procedure xsi:type="apex:adaptiveProcedureType">
        <parameters>
            <presentations>100</presentations>
            <skip>0</skip>
            <order>sequential</order>
            <nUp>1</nUp>
            <nDown>1</nDown>
            <adapt_parameter>signal-gain</adapt_parameter>
            <start_value>-10</start_value>
            <stop_after_type>presentations</stop_after_type>
            <stop_after>100</stop_after>
            <min_value>-40</min_value>
            <max_value>40</max_value>
            <larger_is_easier>true</larger_is_easier>
            <stepsizes>
                <stepsize begin="0" size="2"/>
            </stepsizes>
        </parameters>
        <trials>
            <trial id="trial">
                <answer>true</answer>
                <screen id="screen"/>
                <stimulus id="stimulus"/>
            </trial>
        </trials>
    </procedure>

    <corrector xsi:type="apex:isequal"/>

    <screens>
        <reinforcement>
            <progressbar>true</progressbar>
            <feedback length="300">false</feedback>
        </reinforcement>

        <screen id="screen">
            <hLayout id="main_layout" width="2" x="1">
                <vLayout height="2" x="1">
                    <button id="false" y="1">
                        <text>more understandable</text>
                    </button>
                    <button id="true" y="2">
                        <text>less understandable</text>
                    </button>
                </vLayout>
                <parameterlist id="pl" x="2">
                    <parameter>signal-gain</parameter>
                    <parameter>signal-offset</parameter>
                    <parameter>signal-angle</parameter>
                    <parameter>noise-angle</parameter>
                    <parameter>wiener-disabled</parameter>
                    <parameter>wiener-length</parameter>
                </parameterlist>
            </hLayout>
            <buttongroup id="buttongroup">
                <button id="false"/>
                <button id="true"/>
            </buttongroup>
            <default_answer_element>buttongroup</default_answer_element>
        </screen>
    </screens>

    <datablocks>
        <datablock id="voice-data">
            <device>wavdevice</device>
            <description>sample raw datablock</description>
            <uri>preempman001_leading_silence.wav</uri>
        </datablock>
        <datablock id="noise-data">
            <device>wavdevice</device>
            <description>sample raw datablock</description>
            <uri>preempauditec16000_shorter.wav</uri>
        </datablock>
    </datablocks>

    <devices>
        <device id="wavdevice" xsi:type="apex:wavDeviceType">
            <driver>portaudio</driver>
            <card>default</card>
            <channels>2</channels>
            <gain>0</gain>
            <samplerate>16000</samplerate>
            <buffersize>8192</buffersize>
        </device>
    </devices>

    <filters>
        <!-- uncomment the probe and compare its output with
        adapt-output_SNR-10_sentence1_10.wav.
        <filter id="wave-probe" xsi:type="apex:pluginfilter">
            <device>wavdevice</device>
            <channels>2</channels>
            <continuous>false</continuous>
            <plugin>filesink</plugin>
            <parameter name="format">pcm16</parameter>
            <parameter name="uri">probe-data-${count}.wav</parameter>
        </filter>
        -->

        <filter id="signal-hrtffilter" xsi:type="apex:pluginfilter">
            <device>wavdevice</device>
            <channels>2</channels>
            <continuous>false</continuous>
            <plugin>hrtf</plugin>
            <parameter id="signal-angle" name="angle">0</parameter>
            <parameter name="uri">freedome_hrtf_GHB_0_5s_${angle}deg_16000Hz_right.bin</parameter>
        </filter>
        <filter id="noise-hrtffilter" xsi:type="apex:pluginfilter">
            <device>wavdevice</device>
            <channels>2</channels>
            <continuous>false</continuous>
            <plugin>hrtf</plugin>
            <parameter id="noise-angle" name="angle">90</parameter>
            <parameter name="uri">freedome_hrtf_GHB_0_5s_${angle}deg_16000Hz_right.bin</parameter>
        </filter>
        <filter id="signal-offset-amplifier" xsi:type="apex:amplifier">
            <device>wavdevice</device>
            <channels>2</channels>
            <continuous>false</continuous>
            <basegain>0</basegain>
            <gain id="signal-offset">10</gain>
        </filter>
        <filter id="signal-amplifier" xsi:type="apex:amplifier">
            <device>wavdevice</device>
            <channels>2</channels>
            <continuous>false</continuous>
            <basegain>15.737858</basegain>
            <gain id="signal-gain">-10</gain>
        </filter>
        <filter id="offset-adder" xsi:type="apex:amplifier">
            <device>wavdevice</device>
            <channels>2</channels>
            <continuous>false</continuous>
            <gain>0</gain>
        </filter>
        <filter id="adder" xsi:type="apex:amplifier">
            <device>wavdevice</device>
            <channels>2</channels>
            <continuous>false</continuous>
            <gain>0</gain>
        </filter>
        <filter id="beamformerfilter" xsi:type="apex:pluginfilter">
            <device>wavdevice</device>
            <channels>2</channels>
            <continuous>false</continuous>
            <plugin>beamformer</plugin>
            <parameter name="uri">FB_freedom_10.bin</parameter>
        </filter>
        <filter id="offset-beamformerfilter" xsi:type="apex:pluginfilter">
            <device>wavdevice</device>
            <channels>2</channels>
            <continuous>false</continuous>
            <plugin>beamformer</plugin>
            <parameter name="uri">FB_freedom_10.bin</parameter>
        </filter>
        <filter id="vad-deemphfilter" xsi:type="apex:pluginfilter">
            <device>wavdevice</device>
            <channels>1</channels>
            <continuous>false</continuous>
            <plugin>emphasis</plugin>
            <parameter name="uri">filter_deemph.bin</parameter>
        </filter>
        <filter id="vadfilter" xsi:type="apex:pluginfilter">
            <device>wavdevice</device>
            <channels>1</channels>
            <continuous>false</continuous>
            <plugin>vad</plugin>
            <parameter id="vad-length" name="length">512</parameter>
        </filter>
        <filter id="wienerfilter" xsi:type="apex:pluginfilter">
            <device>wavdevice</device>
            <channels>5</channels>
            <continuous>false</continuous>
            <plugin>adaptivewiener</plugin>
            <parameter id="wiener-length" name="length">64</parameter>
            <parameter id="wiener-muinv" name="muinv">0.0</parameter>
            <parameter id="wiener-disabled" name="disabled">false</parameter>
        </filter>
        <filter id="result-deemphfilter" xsi:type="apex:pluginfilter">
            <device>wavdevice</device>
            <channels>1</channels>
            <continuous>false</continuous>
            <plugin>emphasis</plugin>
            <parameter name="uri">filter_deemph.bin</parameter>
        </filter>
    </filters>

    <stimuli>
        <fixed_parameters/>
        <stimulus id="stimulus">
            <datablocks>
                <simultaneous>
                    <datablock id="voice-data"/>
                    <datablock id="noise-data"/>
                </simultaneous>
            </datablocks>
            <variableParameters/>
            <fixedParameters/>
        </stimulus>
    </stimuli>

    <connections>
        <connection>
            <from><id>voice-data</id><channel>0</channel></from>
            <to><id>signal-hrtffilter</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>signal-hrtffilter</id><channel>0</channel></from>
            <to><id>signal-amplifier</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>signal-hrtffilter</id><channel>1</channel></from>
            <to><id>signal-amplifier</id><channel>1</channel></to>
        </connection>
        <connection>
            <from><id>signal-amplifier</id><channel>0</channel></from>
            <to><id>adder</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>signal-amplifier</id><channel>1</channel></from>
            <to><id>adder</id><channel>1</channel></to>
        </connection>

        <connection>
            <from><id>signal-amplifier</id><channel>0</channel></from>
            <to><id>signal-offset-amplifier</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>signal-amplifier</id><channel>1</channel></from>
            <to><id>signal-offset-amplifier</id><channel>1</channel></to>
        </connection>
        <connection>
            <from><id>signal-offset-amplifier</id><channel>0</channel></from>
            <to><id>offset-adder</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>signal-offset-amplifier</id><channel>1</channel></from>
            <to><id>offset-adder</id><channel>1</channel></to>
        </connection>

        <connection>
            <from><id>noise-data</id><channel>0</channel></from>
            <to><id>noise-hrtffilter</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>noise-hrtffilter</id><channel>0</channel></from>
            <to><id>adder</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>noise-hrtffilter</id><channel>1</channel></from>
            <to><id>adder</id><channel>1</channel></to>
        </connection>
        <connection>
            <from><id>noise-hrtffilter</id><channel>0</channel></from>
            <to><id>offset-adder</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>noise-hrtffilter</id><channel>1</channel></from>
            <to><id>offset-adder</id><channel>1</channel></to>
        </connection>

        <connection>
            <from><id>adder</id><channel>0</channel></from>
            <to><id>beamformerfilter</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>adder</id><channel>1</channel></from>
            <to><id>beamformerfilter</id><channel>1</channel></to>
        </connection>

        <connection>
            <from><id>offset-adder</id><channel>0</channel></from>
            <to><id>offset-beamformerfilter</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>offset-adder</id><channel>1</channel></from>
            <to><id>offset-beamformerfilter</id><channel>1</channel></to>
        </connection>

        <connection>
            <from><id>offset-beamformerfilter</id><channel>0</channel></from>
            <to><id>vad-deemphfilter</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>vad-deemphfilter</id><channel>0</channel></from>
            <to><id>vadfilter</id><channel>0</channel></to>
        </connection>

        <connection>
            <from><id>beamformerfilter</id><channel>0</channel></from>
            <to><id>wienerfilter</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>beamformerfilter</id><channel>1</channel></from>
            <to><id>wienerfilter</id><channel>1</channel></to>
        </connection>
        <connection>
            <from><id>offset-beamformerfilter</id><channel>0</channel></from>
            <to><id>wienerfilter</id><channel>2</channel></to>
        </connection>
        <connection>
            <from><id>offset-beamformerfilter</id><channel>1</channel></from>
            <to><id>wienerfilter</id><channel>3</channel></to>
        </connection>
        <connection>
            <from><id>vadfilter</id><channel>0</channel></from>
            <to><id>wienerfilter</id><channel>4</channel></to>
        </connection>

        <connection>
            <from><id>wienerfilter</id><channel>0</channel></from>
            <to><id>result-deemphfilter</id><channel>0</channel></to>
        </connection>
        <connection>
            <from><id>result-deemphfilter</id><channel>0</channel></from>
            <to><id>wavdevice</id><channel>0</channel></to>
        </connection>

        <!-- uncomment the probe and compare its output with
        adapt-output_SNR-10_sentence1_10.wav.
        <connection>
            <from><id>result-deemphfilter</id><channel>0</channel></from>
            <to><id>wave-probe</id><channel>1</channel></to>
        </connection>
        -->
    </connections>

</apex:apex>
