<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!-- @doc
  @what: Demonstrate restoring parameter values
  @description: When a parameter is set from a stimulus, and subsequently a stimulus is played in which the parameter is not set, it should be restored to its default value
  @how: Parameter gain is set in stimulus1, and is not set in stimulus2. Therefore a gain of 0dB should be applied for stimulus2

-->
 <procedure xsi:type="apex:trainingProcedure">
  <parameters>
   <presentations>10</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>correct</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
   <trial id="trial2">
    <answer>wrong</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus2"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>false</progressbar>
   <feedback>false</feedback>
  </reinforcement>
  <defaultFont>Comic Sans MS</defaultFont>
  <screen id="screen1">
   <gridLayout width="2" x="1" id="answer_layout" y="2" height="2">
    <button x="1" id="correct" y="1">
     <text>Set</text>
    </button>
    <button x="2" id="wrong" y="1">
     <text>Restore</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="correct"/>
    <button id="wrong"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>file:../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>soundcard1</device>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device id="soundcard1" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
  </device>
 </devices>
 <filters>
  <filter id="amplifier" xsi:type="apex:amplifier">
   <device>soundcard1</device>
   <channels>1</channels>
   <basegain>0</basegain>
   <gain id="gain">0</gain>
  </filter>
 </filters>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <sequential>
     <datablock id="rawdata1"/>
    </sequential>
   </datablocks>
   <variableParameters>
    <parameter id="gain">-20</parameter>
   </variableParameters>
   <fixedParameters/>
  </stimulus>
  <stimulus id="stimulus2">
   <description>silence</description>
   <datablocks>
    <sequential>
     <datablock id="rawdata1"/>
    </sequential>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>_ALL_</id>
    <channel>0</channel>
   </from>
   <to>
    <id>amplifier</id>
    <channel>0</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>amplifier</id>
    <channel>0</channel>
   </from>
   <to>
    <id>soundcard1</id>
    <channel>0</channel>
   </to>
  </connection>
 </connections>
</apex:apex>
