<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
  <!-- @doc
  @what: Stop after a specified number of presentations (3) - should in this case stop after 6 trials (presentation: every trial is presented once => 2 trials => 2x3 = 6)
  @description: When you click on the button 'correct or wrong', you hear a stimulus 'wd1.wav (een/one)' in both ears. When you click again, the gain of the stimulus StaysTheSame/Decreases/Increases according to the button (correct/false) and the number of ups and downs
               The frequency of decrease/increase is NOT the same - 2clicks 'false' = up - 1click 'correct' = down
  @how: adaptiveProcedure - stop_after_type: presentations - adapt_parameter (gain: gain of stimulus)
 -->
 <procedure xsi:type="apex:adaptiveProcedure">
  <parameters>
   <presentations>3</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
   <nUp>1</nUp>
   <nDown>1</nDown>
   <adapt_parameter>gain</adapt_parameter>
   <start_value>-10</start_value>
   <stop_after_type>presentations</stop_after_type>
   <stop_after>3</stop_after>
   <min_value>-100</min_value>
   <max_value>0</max_value>
   <larger_is_easier>true</larger_is_easier>
   <stepsizes>
    <stepsize size="5" begin="0"/>
   </stepsizes>
  </parameters>
  <trials>
   <trial id="trial0">
    <answer>correct</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus0"/>
   </trial>
   <trial id="trial1">
    <answer>correct</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus0"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">false</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout id="main_layout" width="2" height="1">
    <button id="correct" row="1" col="1">
     <text>correct</text>
    </button>
    <button id="false" row="1" col="2">
     <text>false</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup">
    <button id="correct"/>
    <button id="false"/>
   </buttongroup>
   <default_answer_element>buttongroup</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>file:../stimuli</uri_prefix>
  <datablock id="datablock0">
   <device>dev</device>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device id="dev" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain id="gain">10</gain>
   <samplerate>44100</samplerate>
  </device>
 </devices>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus0">
   <description>Stimulus 0</description>
   <datablocks>
    <datablock id="datablock0"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>_ALL_</id>
    <channel>0</channel>
   </from>
   <to>
    <id>dev</id>
    <channel>0</channel>
   </to>
  </connection>
 </connections>
</apex:apex>
