<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
 version="1">
  
  <!-- 
    Regression test for CST (cfr Apex 2)
    1. Sequential
    
    Output sequence:
    audible 1 2 3 4 5 6
    
    Expected input:
    buttons   1 2 3 4 5 6 
    
    Expected answer:
    all correct
  -->
  
  <procedure xsi:type="apex:constantProcedureType">
    
    <parameters>
      <presentations>1</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    
      
      
    </trials>
  </procedure>
  
  <corrector xsi:type="apex:isequal"/>
    <!--type>isequal</type-->
  
  
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
      <showcurrent>false</showcurrent>
    </reinforcement>
    <screen id="screen1">
      <gridLayout height="2" width="3" id="main_layout">
        
        <button x="1" y="1" id="button1">
          <text>1</text>
        </button>
        
        <button x="2" y="1" id="button2">
          <text>2</text>
        </button>
        
        <button x="3" y="1" id="button3">
          <text>3</text>
        </button>
        
        <button x="1" y="2" id="button4">
          <text>4</text>
        </button>
        
        <button x="2" y="2" id="button5">
          <text>5</text>
        </button>
        
        <button x="3" y="2" id="button6">
          <text>6</text>
        </button>
        
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
        <button id="button4"/>
        <button id="button5"/>
        <button id="button6"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens> 
  
  
  <datablocks>
    <uri_prefix>../stimuli</uri_prefix>
    <datablock id="rawdata1" >
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
  
  </datablocks>
  
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain channel="0">-50</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  
  <filters/>
  
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
  
  </stimuli>
  
  <connections/>  
 
  
</apex:apex>