<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.3/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.3/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.3/experiment"
 version="1">
  
  

  <!-- 
  Regression test for AID (cfr Apex 2)
  1. Sequential
   
    -->
  
  <procedure xsi:type="apex:multiProcedureType">
        <parameters>
          <order>sequential</order>
    </parameters>
    
    
   <procedure xsi:type="apex:adaptiveProcedureType" id="procedure1">
    
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>snr</adapt_parameter>
      <start_value>3</start_value>
      <stop_after_type>reversals</stop_after_type>
      <stop_after>10</stop_after>
      <larger_is_easier>true</larger_is_easier>
      <stepsizes>
        <stepsize begin="0" size="2"/>
        <stepsize begin="2" size="1"/>
        </stepsizes>
    </parameters>
    
    <trials>
      <trial id="trial1_1" >
        <answer>button_correct</answer>
        <screen id="screen1" />
        <stimulus id="stimulus1" />
        <stimulus id="stimulus2" />
        <stimulus id="stimulus3" />
        <stimulus id="stimulus4" />
        <stimulus id="stimulus5" />
      </trial>
    
    </trials>
   </procedure>
    
    
    <procedure xsi:type="apex:adaptiveProcedureType" id="procedure2">
      <parameters>
        <presentations>10</presentations>
        <skip>0</skip>
        <order>sequential</order>
        <nUp>1</nUp>
        <nDown>1</nDown>
        <adapt_parameter>snr</adapt_parameter>
        <start_value>3</start_value>
        <stop_after_type>reversals</stop_after_type>
        <stop_after>10</stop_after>
        <larger_is_easier>true</larger_is_easier>
        <stepsizes>        
          <stepsize begin="0" size="2"/>
          <stepsize begin="2" size="1"/>
        </stepsizes>
      </parameters>
      
      <trials>
        <trial id="trial1_2" >
          <answer>button_correct2</answer>
          <screen id="screen2" />
          <stimulus id="stimulus1" />
          <stimulus id="stimulus2" />
          <stimulus id="stimulus3" />
          <stimulus id="stimulus4" />
          <stimulus id="stimulus5" />
        </trial>
        
      </trials>
    </procedure>
    
    </procedure>
  
  <corrector xsi:type="apex:isequal"/> 
  
  <screens>
    <screen id="screen1" >
      <gridLayout width="1" height="2">
        <label id="label1" x="1" y="1">
          <text>Procedure 1</text>
        </label>
        
        <gridLayout height="1" width="2" id="main_layout" x="1" y="2">

        <button x="1" y="1" id="button_correct" >
          <text>correct</text>
        </button>
        <button x="2" y="1" id="button_wrong" >
          <text>wrong</text>
        </button>
        
      </gridLayout>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button_correct"/>
        <button id="button_wrong"/>
        </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
    
    <screen id="screen2" >
      <gridLayout width="1" height="2">
        <label id="label2" x="1" y="1">
          <text>Procedure 2</text>
        </label>
        
        <gridLayout height="1" width="2" id="main_layout2" x="1" y="2">
          
          <button x="1" y="1" id="button_correct2" >
            <text>correct</text>
          </button>
          <button x="2" y="1" id="button_wrong2" >
            <text>wrong</text>
          </button>
          
        </gridLayout>
      </gridLayout>
      <buttongroup id="buttongroup2">
        <button id="button_correct2"/>
        <button id="button_wrong2"/>
      </buttongroup>
      <default_answer_element>buttongroup2</default_answer_element>
    </screen>
  </screens>
  
 <datablocks>
   <uri_prefix>../stimuli</uri_prefix>
   <datablock id="rawdata1" >
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
   </datablock>
   <datablock id="rawdata2" >
     <device>wavdevice</device>
     <uri>wd2.wav</uri>
   </datablock>
   <datablock id="rawdata3"  >
     <device>wavdevice</device>
     <uri>wd3.wav</uri>
   </datablock>
   <datablock id="rawdata4" >
     <device>wavdevice</device>
     <uri>wd4.wav</uri>
   </datablock>
   <datablock id="rawdata5"  >
     <device>wavdevice</device>
     <uri>wd5.wav</uri>
   </datablock>
   
   
 </datablocks><devices>
   <device id="wavdevice" xsi:type="apex:wavDeviceType">
            <driver>portaudio</driver>
		<card>default</card>
        <channels>2</channels>
     <gain>0</gain>
        <samplerate>44100</samplerate>
        <buffersize>512</buffersize>
   </device>
 </devices>
  
  
  
  <filters>
    
  </filters><stimuli>
    <fixed_parameters>
      <parameter id="snr"/>
    </fixed_parameters>
    
    <stimulus id="stimulus1" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1" />
      </datablocks>
      <variableParameters/>
     <fixedParameters>
       <parameter id="snr">1</parameter>
     </fixedParameters>
    </stimulus>
    
    <stimulus id="stimulus2" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2" />
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">2</parameter>
      </fixedParameters>
    </stimulus>
    
    <stimulus id="stimulus3" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3" />
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">3</parameter>
      </fixedParameters>
    </stimulus>

  
  <stimulus id="stimulus4" >
    <description>Eenvoudige teststimulus</description>
    <datablocks>
      <datablock id="rawdata4" />
    </datablocks>
    <variableParameters/>
    <fixedParameters>
      <parameter id="snr">4</parameter>
    </fixedParameters>
  </stimulus>
  
  <stimulus id="stimulus5" >
    <description>Eenvoudige teststimulus</description>
    <datablocks>
      <datablock id="rawdata5" />
    </datablocks>
    <variableParameters/>
    <fixedParameters>
      <parameter id="snr">5</parameter>
    </fixedParameters>
  </stimulus>
  </stimuli>
  
  <connections/>
  
  
</apex:apex>
