<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
 version="1">
  
  <!-- 
  Regression test for multiprocedure - procedures in random order
    -->
    
  <procedure xsi:type="apex:multiProcedureType" id="themultiprocedure">
    <parameters>
      <order>onebyone</order>
    </parameters>
    
           
    <procedure xsi:type="apex:constantProcedureType" id="procedure1">
    <parameters>
      <presentations>2</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
    
    <procedure xsi:type="apex:constantProcedureType" id="procedure2">
      <parameters>
        <presentations>2</presentations>
        <skip>0</skip>
        <order>sequential</order>
      </parameters>
      
      <trials>

        <trial id="trial4">
          <answer>button4</answer>
          <screen id="screen2"/>
          <stimulus id="stimulus1"/>
        </trial>
               
      </trials>
    </procedure>
    
    <procedure xsi:type="apex:constantProcedureType" id="procedure3">
      <parameters>
        <presentations>2</presentations>
        <skip>0</skip>
        <order>sequential</order>
      </parameters>
      
      <trials>
        
        <trial id="trial5">
          <answer>button5</answer>
          <screen id="screen3"/>
          <stimulus id="stimulus1"/>
        </trial>
        
      </trials>
    </procedure>
    
  </procedure>
    

  
  <corrector xsi:type="apex:isequal"/>
    
  <screens>
    <screen id="screen1">
      <gridLayout height="1" width="3" id="main_layout1">

        <label id="label1" x="1" y="1">
          <text>Procedure 1</text>
        </label>
        
        
        <button x="2" y="1" id="button1">
          <text>1</text>
        </button>
  
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
    
    <screen id="screen2">
      <gridLayout height="1" width="4" id="main_layout2">

        <label id="label2" x="1" y="1">
          <text>Procedure 2</text>
        </label>
        
        <button x="2" y="1" id="button4">
      <text>4</text>
    </button>
    
      </gridLayout>
      <buttongroup id="buttongroup2">
        <button id="button4"/>
      </buttongroup>
      <default_answer_element>buttongroup2</default_answer_element>    
    </screen>

    <screen id="screen3">
      <gridLayout height="1" width="4" id="main_layout3">
        
        <label id="label3" x="1" y="1">
          <text>Procedure 3</text>
        </label>
        
        <button x="2" y="1" id="button5">
          <text>5</text>
        </button>
        
      </gridLayout>
      <buttongroup id="buttongroup3">
        <button id="button5"/>
      </buttongroup>
      <default_answer_element>buttongroup3</default_answer_element>    
    </screen>
    
    
  </screens> 
  
  
 <datablocks>
   <uri_prefix>../stimuli</uri_prefix>
    <datablock id="rawdata1" >
      <device>wavdevice</device>
      <uri>silence:1</uri>
      <channels>1</channels>
    </datablock>
</datablocks>

  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
            <driver>portaudio</driver>
		<card>default</card>
        <channels>2</channels>
        <gain>0</gain>
        <samplerate>44100</samplerate>
        <buffersize>512</buffersize>
    </device>
  </devices>
  
  <filters>

  </filters>
  

  
  <stimuli>
      <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>


  </stimuli>

  <connections/>  
   
</apex:apex>