<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.3/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.3/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.3/experiment"
 version="1">
  
  

  <!-- 
  Regression test for multiple standards

    -->
    
   <procedure xsi:type="apex:adaptiveProcedureType">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <uniquestandard>true</uniquestandard>
      <choices>5</choices>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>snr</adapt_parameter>
      <start_value>3</start_value>
      <stop_after_type>reversals</stop_after_type>
      <stop_after>2</stop_after>
      <larger_is_easier>true</larger_is_easier>
      <stepsizes>
        <stepsize begin="0" size="2"/>
        <stepsize begin="2" size="1"/>
      </stepsizes>

    </parameters>
    
    <trials>
      <trial id="trial1" >
        <screen id="screen1" />
         <stimulus id="standard1"/>
        
        <standard id="stimulus1" />
        <standard id="stimulus2" />
        <standard id="stimulus3" />
        <standard id="stimulus4" />
        <standard id="stimulus5" />
        
      </trial>
      <trial id="trial2" >
        <screen id="screen1" />
        <stimulus id="stimulus2" />
        <standard id="standard1"/>
      </trial>
      
    </trials>
   </procedure>
  
  <corrector xsi:type="apex:alternatives">
    <answers>
        <answer number="1" value="button1"/>
        <answer number="2" value="button2"/>
        <answer number="3" value="button3"/>
      <answer number="4" value="button4"/>
      <answer number="5" value="button5"/>
     </answers>
  </corrector>
  
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1" >

      <gridLayout height="1" width="5" id="main_layout">

        <button x="1" y="1" id="button1" >
          <text>1</text>
        </button>
        <button x="2" y="1" id="button2" >
          <text>2</text>
        </button>
        <button x="3" y="1" id="button3" >
          <text>3</text>
        </button>
        <button x="4" y="1" id="button4" >
          <text>4</text>
        </button>
        <button x="5" y="1" id="button5" >
          <text>5</text>
        </button>
        
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
        <button id="button4"/>
        <button id="button5"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  
 <datablocks>
   <uri_prefix>../stimuli</uri_prefix>
   <datablock id="rawdata1" >
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
   </datablock>
   <datablock id="rawdata2" >
     <device>wavdevice</device>
     <uri>wd2.wav</uri>
   </datablock>
   <datablock id="rawdata3"  >
     <device>wavdevice</device>
     <uri>wd3.wav</uri>
   </datablock>
   <datablock id="rawdata4" >
     <device>wavdevice</device>
     <uri>wd4.wav</uri>
   </datablock>
   <datablock id="rawdata5"  >
     <device>wavdevice</device>
     <uri>wd5.wav</uri>
   </datablock>
   
   <datablock id="noisedata" >
     <device>wavdevice</device>
     <uri>ruisje.wav</uri>
   </datablock>
   
 </datablocks><devices>
   <device id="wavdevice" xsi:type="apex:wavDeviceType">
            <driver>portaudio</driver>
		<card>default</card>
        <channels>2</channels>
        <gain>0</gain>
        <samplerate>44100</samplerate>
        <buffersize>512</buffersize>
   </device>
 </devices>
  
  
  
  <filters>
    
  </filters><stimuli>
    <fixed_parameters>
      <parameter id="snr"/>
    </fixed_parameters>
    
    <stimulus id="standard1" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata" />
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">20</parameter>
      </fixedParameters>
    </stimulus> 
    
    
    <stimulus id="stimulus1" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1" />
      </datablocks>
      <variableParameters/>
     <fixedParameters>
       <parameter id="snr">1</parameter>
     </fixedParameters>
    </stimulus>
    
    <stimulus id="stimulus2" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2" />
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">2</parameter>
      </fixedParameters>
    </stimulus>
    
    <stimulus id="stimulus3" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3" />
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">3</parameter>
      </fixedParameters>
    </stimulus>

  
  <stimulus id="stimulus4" >
    <description>Eenvoudige teststimulus</description>
    <datablocks>
      <datablock id="rawdata4" />
    </datablocks>
    <variableParameters/>
    <fixedParameters>
      <parameter id="snr">4</parameter>
    </fixedParameters>
  </stimulus>
  
  <stimulus id="stimulus5" >
    <description>Eenvoudige teststimulus</description>
    <datablocks>
      <datablock id="rawdata5" />
    </datablocks>
    <variableParameters/>
    <fixedParameters>
      <parameter id="snr">5</parameter>
    </fixedParameters>
  </stimulus>
  </stimuli>
  
  <connections/>
  
  
  
  
  
  
  
  
</apex:apex>
