<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
 version="1">
  
  

  <!-- 
  Regression test for pause between stimuli
    a pause of 500ms should be introduced between the stimulus and the standards
    -->
    
   <procedure xsi:type="apex:adaptiveProcedureType">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <choices>3</choices>
      <pause_between_stimuli>1000</pause_between_stimuli>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>snr</adapt_parameter>
      <start_value>3</start_value>
      <stop_after_type>reversals</stop_after_type>
      <stop_after>2</stop_after>
      <larger_is_easier>true</larger_is_easier>
      <stepsizes>
        <stepsize begin="0" size="2"/>
        <stepsize begin="2" size="1"/>
      </stepsizes>

    </parameters>
    
    <trials>
      <trial id="trial1" >
        <screen id="screen1" />
        <stimulus id="stimulus1" />
        <standard id="standard1"/>
      </trial>
      <!--trial id="trial2" >
        <screen id="screen1" />
        <stimulus id="stimulus2" />
        <standard id="standard1"/>
      </trial-->
      
    </trials>
   </procedure>
  
  <corrector xsi:type="apex:alternatives">
    <answers>
        <answer number="1" value="button1"/>
        <answer number="2" value="button2"/>
        <answer number="3" value="button3"/>
     </answers>
  </corrector>
  
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1" >

      <gridLayout height="1" width="3" id="main_layout">

        <button x="1" y="1" id="button1" >
          <text>eerste</text>
        </button>
        <button x="2" y="1" id="button2" >
          <text>tweede</text>
        </button>
        <button x="3" y="1" id="button3" >
          <text>derde</text>
        </button>
        
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  
 <datablocks>
   <uri_prefix>../stimuli</uri_prefix>
   
   <datablock id="noisedata" >
     <device>wavdevice</device>
     <uri>ruisje.wav</uri>
   </datablock>
   
 </datablocks><devices>
   <device id="wavdevice" xsi:type="apex:wavDeviceType">
            <driver>portaudio</driver>
		<card>default</card>
        <channels>2</channels>
        <gain>0</gain>
        <samplerate>44100</samplerate>
        <buffersize>512</buffersize>
   </device>
 </devices>
  
  
  
  <filters>
    
  </filters><stimuli>
    <fixed_parameters>
      <parameter id="snr"/>
    </fixed_parameters>
    
    <stimulus id="standard1" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata" />
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">20</parameter>
      </fixedParameters>
    </stimulus> 
    
    
    <stimulus id="stimulus1" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata" />
      </datablocks>
      <variableParameters/>
     <fixedParameters>
       <parameter id="snr">1</parameter>
     </fixedParameters>
    </stimulus>
    </stimuli>
    
    
  <connections/>
  
  
  
  
  
  
  
  
</apex:apex>
