<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!-- @doc
  @what: Randomgenerator test
  @description: the stimulus "een" & "twee" are played simultaneously but randomly in the left or right channel according the value returnd by random1
  @how: trainingProcedure - randomgenerator - connections - stimuli:datablocks: simultaneous
  -->
 <procedure xsi:type="apex:trainingProcedure">
  <parameters>
   <presentations>50</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">false</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout width="3" height="2" id="main_layout">
    <button x="1" y="1" id="button1">
     <text>1-2</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
  <datablock id="rawdata2">
   <device>wavdevice</device>
   <uri>wd2.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>512</buffersize>
  </device>
 </devices>
 <filters>
  <filter id="ampli" xsi:type="apex:amplifier">
   <device>wavdevice</device>
   <channels>1</channels>
   <basegain>-20</basegain>
   <gain id="parameter">0</gain>
  </filter>
 </filters>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <simultaneous>
    <datablock id="rawdata1"/>
    <datablock id="rawdata2"/>
    </simultaneous>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>rawdata1</id>
    <channel>0</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel id="channelparam">0</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>rawdata2</id>
    <channel>0</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel id="channelparam2">1</channel>
   </to>
  </connection>
 </connections>
 <randomgenerators>
  <randomgenerator id="random1" xsi:type="apex:uniform">
   <min>0</min>
   <max>1</max>
   <type>int</type>
   <parameter>channelparam</parameter>
  </randomgenerator>
  <randomgenerator id="random35" xsi:type="apex:uniform">
   <min>0</min>
   <max>1</max>
   <type>int</type>
   <parameter>channelparam2</parameter>
  </randomgenerator>
 </randomgenerators>
</apex:apex>