<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
  xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.3/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.3/experiment.xsd"
  xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.3/experiment"
  version="1">
  
  <!-- 
    Randomgenerator test
    
    Desired behaviour: the stimulus "één" is played on randomly the left or right channel according the value returnd by random1
  -->
  
  <procedure xsi:type="apex:trainingProcedureType">
    
    <parameters>
      <presentations>50</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
                  
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  
  <corrector xsi:type="apex:isequal"/>
    <!--type>isequal</type-->
  
  
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout height="2" width="3" id="main_layout">
        
        <button x="1" y="1" id="button1">
          <text>1</text>
        </button>
        
        
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens> 
  
  
  <datablocks>
    <uri_prefix>../stimuli</uri_prefix>
    <datablock id="rawdata1" >
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="rawdata2" >
      <device>wavdevice</device>
      <uri>wd2.wav</uri>
    </datablock>

  </datablocks>
  
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
     <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  
  <filters>
    <filter id="ampli" xsi:type="apex:amplifier">
      <device>wavdevice</device>
      <channels>1</channels>
      <basegain>-20</basegain>
      <gain id="parameter">0</gain>
    </filter>
    
  </filters>
  
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <simultaneous>
        <datablock id="rawdata1"/>  
          <datablock id="rawdata2"/>
        </simultaneous>
        
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    
  </stimuli>
  
  <connections>
    <connection>
      <from>
        <id>rawdata1</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel  id="channelparam">0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>rawdata2</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel  id="channelparam2">1</channel>
      </to>
    </connection>
    
  </connections>
  
  <randomgenerators>
    <randomgenerator xsi:type="apex:uniform" id="random1">
      <min>0</min>
      <max>1</max>
      <type>int</type>
      <parameter>channelparam</parameter>  
    </randomgenerator>
    <randomgenerator xsi:type="apex:uniform" id="random35">
      <min>0</min>
      <max>1</max>
      <type>int</type>
      <parameter>channelparam2</parameter>  
    </randomgenerator>    
  </randomgenerators>
  
</apex:apex>
