<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.4/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.4/experiment.xsd" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.4/experiment" version="1">
  <!-- @doc
  @what: The first selected trial (of the first presentation) shoud be repeatedly presented (stop after 5 presentations, several trials)
  @description: 5 presentations x 5 trials = 25x - When you click correct => the next trial begins / When you click wrong, the first trial of the first presentation is repeated
  @how: repeat_first_until_correct: true
  -->
  <procedure xsi:type="apex:adaptiveProcedure">
    <parameters>
      <presentations>5</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
      <nUp>1</nUp>
      <nDown>1</nDown>
      <adapt_parameter>snr</adapt_parameter>
      <start_value>3</start_value>
      <stop_after_type>presentations</stop_after_type>
      <stop_after>5</stop_after>
      <larger_is_easier>true</larger_is_easier>
      <repeat_first_until_correct>true</repeat_first_until_correct>
      <stepsizes>
        <stepsize size="2" begin="0"/>
        <stepsize size="1" begin="2"/>
      </stepsizes>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button_correct</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>button_correct</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus2"/>
      </trial>
      <trial id="trial3">
        <answer>button_correct</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus3"/>
      </trial>
      <trial id="trial4">
        <answer>button_correct</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus4"/>
      </trial>
      <trial id="trial5">
        <answer>button_correct</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus5"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout id="main_layout" height="1" width="2">
        <button id="button_correct" x="1" y="1">
          <text>correct</text>
        </button>
        <button id="button_wrong" x="2" y="1">
          <text>wrong</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button_correct"/>
        <button id="button_wrong"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="rawdata2">
      <device>wavdevice</device>
      <file>wd2.wav</file>
    </datablock>
    <datablock id="rawdata3">
      <device>wavdevice</device>
      <file>wd3.wav</file>
    </datablock>
    <datablock id="rawdata4">
      <device>wavdevice</device>
      <file>wd4.wav</file>
    </datablock>
    <datablock id="rawdata5">
      <device>wavdevice</device>
      <file>wd5.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>4096</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters>
      <parameter id="snr"/>
    </fixed_parameters>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">1</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">2</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus3">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">3</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus4">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata4"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">4</parameter>
      </fixedParameters>
    </stimulus>
    <stimulus id="stimulus5">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata5"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters>
        <parameter id="snr">5</parameter>
      </fixedParameters>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
