<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
  <!-- @doc
  @what: The first selected trial (of the first presentation) shoud be repeatedly presented (stop after 5 reversals, multiple trials)
  @description: 5 trials, stop after 5 reversals - When you click correct => the next trial begins / When you click wrong, the first trial of the first presentation is repeated
                the adaptive parameters does NOT have an influence on the output => multiple trials!
  @how: adaptiveprocedure - REPEAT-FIRST-UNTIL-CORRECT: TRUE - adapt_parameter
  -->
 <procedure xsi:type="apex:adaptiveProcedure">
  <parameters>
   <presentations>10</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
   <nUp>1</nUp>
   <nDown>1</nDown>
   <adapt_parameter>snr</adapt_parameter>
   <start_value>3</start_value>
   <stop_after_type>reversals</stop_after_type>
   <stop_after>5</stop_after>
   <larger_is_easier>true</larger_is_easier>
   <repeat_first_until_correct>true</repeat_first_until_correct>
   <stepsizes>
    <stepsize size="1" begin="0"/>
   </stepsizes>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button_correct</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
   <trial id="trial2">
    <answer>button_correct</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus2"/>
   </trial>
   <trial id="trial3">
    <answer>button_correct</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus3"/>
   </trial>
   <trial id="trial4">
    <answer>button_correct</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus4"/>
   </trial>
   <trial id="trial5">
    <answer>button_correct</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus5"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">false</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout width="2" height="1" id="main_layout">
    <button x="1" y="1" id="button_correct">
     <text>correct</text>
    </button>
    <button x="2" y="1" id="button_wrong">
     <text>wrong</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button_correct"/>
    <button id="button_wrong"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
  <datablock id="rawdata2">
   <device>wavdevice</device>
   <uri>wd2.wav</uri>
  </datablock>
  <datablock id="rawdata3">
   <device>wavdevice</device>
   <uri>wd3.wav</uri>
  </datablock>
  <datablock id="rawdata4">
   <device>wavdevice</device>
   <uri>wd4.wav</uri>
  </datablock>
  <datablock id="rawdata5">
   <device>wavdevice</device>
   <uri>wd5.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>4096</buffersize>
  </device>
 </devices>
 <filters/>
 <stimuli>
  <fixed_parameters>
   <parameter id="snr"/>
  </fixed_parameters>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">1</parameter>
   </fixedParameters>
  </stimulus>
  <stimulus id="stimulus2">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata2"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">2</parameter>
   </fixedParameters>
  </stimulus>
  <stimulus id="stimulus3">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata3"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">3</parameter>
   </fixedParameters>
  </stimulus>
  <stimulus id="stimulus4">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata4"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">4</parameter>
   </fixedParameters>
  </stimulus>
  <stimulus id="stimulus5">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata5"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">5</parameter>
   </fixedParameters>
  </stimulus>
 </stimuli>
 <connections/>
</apex:apex>
