<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
  xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.3/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.3/experiment.xsd"
  xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.3/experiment"
  version="1">
  
  <!-- 
 Test of random stimulus output when more than one defined in a trial
  -->
  
  <procedure xsi:type="apex:constantProcedureType">
    
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
        <stimulus id="stimulus2"/>
        <stimulus id="stimulus3"/>
      </trial>
      
    </trials>
  </procedure>
  
  <corrector xsi:type="apex:isequal"/>
    <!--type>isequal</type-->
  
  
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
      <showcurrent>false</showcurrent>
    </reinforcement>
    <screen id="screen1">
      <gridLayout height="2" width="3" id="main_layout">
        
        <button x="1" y="1" id="button1">
          <text>1</text>
        </button>
        
        
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens> 
  
  
  <datablocks>
    <uri_prefix>../stimuli</uri_prefix>
    <datablock id="rawdata1" >
      <device>wavdevice</device>
      <uri>wd1.wav</uri>
    </datablock>
    <datablock id="rawdata2" >
      <device>wavdevice</device>
      <uri>wd2.wav</uri>
    </datablock>
    <datablock id="rawdata3" >
      <device>wavdevice</device>
      <uri>wd3.wav</uri>
    </datablock>
    <datablock id="rawdata4" >
      <device>wavdevice</device>
      <uri>wd4.wav</uri>
    </datablock>
    <datablock id="rawdata5">
      <device>wavdevice</device>
      <uri>wd5.wav</uri>
    </datablock>
    <datablock id="rawdata6">
      <device>wavdevice</device>
      <uri>wd6.wav</uri>
    </datablock>
  </datablocks>
  
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  
  <filters/>
  
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    <stimulus id="stimulus3">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    <stimulus id="stimulus4">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata4"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>  
    
    <stimulus id="stimulus5">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata5"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
    <stimulus id="stimulus6">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata6"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    
  </stimuli>
  
  <connections/>  
 
  
</apex:apex>