<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!-- @doc
    @what: Randomgenerator: random gain of each datablock of a multi-interval stimulus
    @description: The stimulus "één één één" is heard each time by pressing on the "1" button, and the gain of each "één" has a random gain
    @how: The id of the gain is set to be the parameter of the randomgenerator, three intervals are defined in procedure
  -->
 <procedure xsi:type="apex:constantProcedure">
  <parameters>
   <presentations>3</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <intervals count="3">
    <interval number="1" element="button1"/>
    <interval number="2" element="button2"/>
    <interval number="3" element="button3"/>
   </intervals>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
    <standard id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">true</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout height="2" id="main_layout" width="3">
    <button y="1" id="button1" x="1">
     <text>1</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device xsi:type="apex:wavDeviceType" id="wavdevice">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
  </device>
 </devices>
 <filters>
  <filter xsi:type="apex:amplifier" id="ampli">
   <device>wavdevice</device>
   <channels>1</channels>
   <basegain>0</basegain>
   <gain id="parameter">0</gain>
  </filter>
 </filters>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>_ALL_</id>
    <channel>0</channel>
   </from>
   <to>
    <id>ampli</id>
    <channel>0</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>ampli</id>
    <channel>0</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel>0</channel>
   </to>
  </connection>
 </connections>
 <randomgenerators>
  <randomgenerator xsi:type="apex:uniform" id="random1">
   <min>-20</min>
   <max>0</max>
   <type>double</type>
   <parameter>parameter</parameter>
   <!-- gain of amplifier -->
  </randomgenerator>
 </randomgenerators>
</apex:apex>
