<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!-- @doc
    @what: Randomgenerator: random gain of stimulus presented in 1 channel, possibility to use non-integer values (double type)
    @description: The stimulus "één" is heard in the right channel each time by pressing on the "1" button, and the gain of "één" has a random gain
    @how: See <randomgenerators>, the id of the gain is set to be the parameter of the randomgenerator, minimum value contains a decimal value
  -->
 <procedure xsi:type="apex:constantProcedure">
  <parameters>
   <presentations>2000</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="0">false</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout height="2" width="3" id="main_layout">
    <button x="1" y="1" id="button1">
     <text>1</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>512</buffersize>
  </device>
 </devices>
 <filters>
  <filter id="ampli" xsi:type="apex:amplifier">
   <device>wavdevice</device>
   <channels>1</channels>
   <basegain>0</basegain>
   <gain id="parameter">0</gain>
  </filter>
 </filters>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections>
  <connection>
   <from>
    <id>_ALL_</id>
    <channel>0</channel>
   </from>
   <to>
    <id>ampli</id>
    <channel>0</channel>
   </to>
  </connection>
  <connection>
   <from>
    <id>ampli</id>
    <channel>0</channel>
   </from>
   <to>
    <id>wavdevice</id>
    <channel>0</channel>
   </to>
  </connection>
 </connections>
 <randomgenerators>
  <randomgenerator id="random1" xsi:type="apex:uniform">
   <min>-15.5</min>
   <max>10</max>
   <type>double</type>
   <parameter>parameter</parameter>
   <!-- gain of amplifier -->
  </randomgenerator>
 </randomgenerators>
</apex:apex>
