<?xml version='1.0' encoding='ISO-8859-1'?>
<apex:apex xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.0/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.0/experiment.xsd" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  <!--  @doc
   @what: Localisation experiment
   @description: 13 loudspeakers, 250Hz frequency stimuli, 5dB roving, no feedback, random presentation order, each loudspeaker presented 3x, real-time results shown for the experimenter
   @how: constantprocedure, <presentations> 3, trials and button between -90� and +90� in steps of 15�, roveamp filter, 13 channels, randomgenerator roving, <showduringexperiment> true
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>3</presentations>
      <skip>0</skip>
      <order>random</order>
    </parameters>
    <trials>
      <trial id="trial-90">
        <answer>button-90</answer>
        <screen id="screen"/>
        <stimulus id="stimulus-90"/>
      </trial>
      <trial id="trial-75">
        <answer>button-75</answer>
        <screen id="screen"/>
        <stimulus id="stimulus-75"/>
      </trial>
      <trial id="trial-60">
        <answer>button-60</answer>
        <screen id="screen"/>
        <stimulus id="stimulus-60"/>
      </trial>
      <trial id="trial-45">
        <answer>button-45</answer>
        <screen id="screen"/>
        <stimulus id="stimulus-45"/>
      </trial>
      <trial id="trial-30">
        <answer>button-30</answer>
        <screen id="screen"/>
        <stimulus id="stimulus-30"/>
      </trial>
      <trial id="trial-15">
        <answer>button-15</answer>
        <screen id="screen"/>
        <stimulus id="stimulus-15"/>
      </trial>
      <trial id="trial0">
        <answer>button0</answer>
        <screen id="screen"/>
        <stimulus id="stimulus0"/>
      </trial>
      <trial id="trial15">
        <answer>button15</answer>
        <screen id="screen"/>
        <stimulus id="stimulus15"/>
      </trial>
      <trial id="trial30">
        <answer>button30</answer>
        <screen id="screen"/>
        <stimulus id="stimulus30"/>
      </trial>
      <trial id="trial45">
        <answer>button45</answer>
        <screen id="screen"/>
        <stimulus id="stimulus45"/>
      </trial>
      <trial id="trial60">
        <answer>button60</answer>
        <screen id="screen"/>
        <stimulus id="stimulus60"/>
      </trial>
      <trial id="trial75">
        <answer>button75</answer>
        <screen id="screen"/>
        <stimulus id="stimulus75"/>
      </trial>
      <trial id="trial90">
        <answer>button90</answer>
        <screen id="screen"/>
        <stimulus id="stimulus90"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <general>
      <repeatbutton>true</repeatbutton>
      <statuspicture>true</statuspicture>
    </general>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="2000">false</feedback>
      <showcurrent>false</showcurrent>
    </reinforcement>
    <screen id="screen">
      <gridLayout width="4" height="4">
        <button id="button-90" col="1" row="1">
          <shortcut>1</shortcut>
          <text>1</text>
        </button>
        <button id="button-75" col="2" row="1">
          <shortcut>2</shortcut>
          <text>2</text>
        </button>
        <button id="button-60" col="3" row="1">
          <shortcut>3</shortcut>
          <text>3</text>
        </button>
        <button id="button-45" col="4" row="1">
          <shortcut>4</shortcut>
          <text>4</text>
        </button>
        <button id="button-30" col="1" row="2">
          <shortcut>5</shortcut>
          <text>5</text>
        </button>
        <button id="button-15" col="2" row="2">
          <shortcut>6</shortcut>
          <text>6</text>
        </button>
        <button id="button0" col="3" row="2">
          <shortcut>7</shortcut>
          <text>7</text>
        </button>
        <button id="button15" col="4" row="2">
          <shortcut>8</shortcut>
          <text>8</text>
        </button>
        <button id="button30" col="1" row="3">
          <shortcut>9</shortcut>
          <text>9</text>
        </button>
        <button id="button45" col="2" row="3">
          <text>10</text>
        </button>
        <button id="button60" col="3" row="3">
          <text>11</text>
        </button>
        <button id="button75" col="4" row="3">
          <text>12</text>
        </button>
        <button id="button90" col="1" row="4">
          <text>13</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup">
        <button id="button-90"/>
        <button id="button-75"/>
        <button id="button-60"/>
        <button id="button-45"/>
        <button id="button-30"/>
        <button id="button-15"/>
        <button id="button0"/>
        <button id="button15"/>
        <button id="button30"/>
        <button id="button45"/>
        <button id="button60"/>
        <button id="button75"/>
        <button id="button90"/>
      </buttongroup>
      <default_answer_element>buttongroup</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>stimuli/</prefix>
    <datablock id="datablock">
      <device>soundcard</device>
      <file>noise13th250Hz_200ms-15dB.wav</file>
    </datablock>
    <datablock id="datablock_calib">
      <device>soundcard</device>
      <file>noise13th250Hz_10000ms-15dB.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="soundcard" xsi:type="apex:wavDeviceType">
      <driver>asio</driver>
      <card>default</card>
      <channels>23</channels>
      <gain id="gain1" channel="0">0</gain>
      <gain id="gain2" channel="1">0</gain>
      <gain id="gain3" channel="2">0</gain>
      <gain id="gain4" channel="3">0</gain>
      <gain id="gain5" channel="4">0</gain>
      <gain id="gain6" channel="5">0</gain>
      <gain id="gain7" channel="6">0</gain>
      <gain id="gain8" channel="7">0</gain>
      <gain id="gain9" channel="18">0</gain>
      <gain id="gain10" channel="19">0</gain>
      <gain id="gain11" channel="20">0</gain>
      <gain id="gain12" channel="21">0</gain>
      <gain id="gain13" channel="22">0</gain>
      <samplerate>44100</samplerate>
      <buffersize>4096</buffersize>
      <padzero>1</padzero>
    </device>
  </devices>
  <filters>
    <filter id="roveamp" xsi:type="apex:amplifier">
      <device>soundcard</device>
      <channels>1</channels>
      <continuous>false</continuous>
      <basegain>0</basegain>
      <gain id="rovegain">0</gain>
    </filter>
    <filter id="compensation_amp" xsi:type="apex:amplifier">
      <!-- compensate for differences in interstimulus calibration -->
      <device>soundcard</device>
      <channels>1</channels>
      <continuous>false</continuous>
      <basegain>0</basegain>
      <gain>0</gain>
    </filter>
  </filters>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus_calib">
      <datablocks>
        <sequential>
          <datablock id="datablock_calib"/>
        </sequential>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus-90">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">0</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus-75">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">1</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus-60">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">2</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus-45">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">3</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus-30">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">4</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus-15">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">5</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus0">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">6</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus15">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">7</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus30">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">18</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus45">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">19</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus60">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">20</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus75">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">21</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus90">
      <datablocks>
        <sequential>
          <datablock id="datablock"/>
        </sequential>
      </datablocks>
      <variableParameters>
        <parameter id="targetchannel">22</parameter>
      </variableParameters>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>1</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>2</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>3</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>4</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>5</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>6</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>7</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>18</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>19</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>20</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>21</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock_calib</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel>22</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>datablock</id>
        <channel>0</channel>
      </from>
      <to>
        <id>compensation_amp</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>compensation_amp</id>
        <channel>0</channel>
      </from>
      <to>
        <id>roveamp</id>
        <channel>0</channel>
      </to>
    </connection>
    <connection>
      <from>
        <id>roveamp</id>
        <channel>0</channel>
      </from>
      <to>
        <id>soundcard</id>
        <channel id="targetchannel">-1</channel>
      </to>
    </connection>
  </connections>
  <randomgenerators>
    <randomgenerator id="roving" xsi:type="apex:uniform">
      <min>-5</min>
      <max>0</max>
      <type>double</type>
      <parameter>rovegain</parameter>
    </randomgenerator>
  </randomgenerators>
  <calibration profile="localization_noise250Hz">
    <soundlevelmeter>
      <plugin>slm_2250</plugin>
      <transducer/>
      <frequency_weighting>A</frequency_weighting>
      <time_weighting>S</time_weighting>
      <type>RMS</type>
      <percentile>0.99</percentile>
      <time>5</time>
    </soundlevelmeter>
    <stimuli>
      <stimulus id="stimulus_calib"/>
    </stimuli>
    <parameters>
      <parameter id="gain1">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain2">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain3">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain4">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain5">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain6">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain7">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain8">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain9">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain10">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain11">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain12">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
      <parameter id="gain13">
        <targetamplitude>60</targetamplitude>
        <calibrationamplitude>75</calibrationamplitude>
        <mute>-150</mute>
        <min>-100</min>
        <max>20</max>
      </parameter>
    </parameters>
  </calibration>
  <results>
    <page>apex:rtresults-localisation.html</page>
    <showduringexperiment>true</showduringexperiment>
    <showafterexperiment>true</showafterexperiment>
    <saveprocessedresults>true</saveprocessedresults>
  </results>
</apex:apex>
