<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.1/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.1/experiment.xsd" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.1/experiment" version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  <!-- @doc
  @what: highlighting of the played stimulus
  @description: the currently playing stimulus/button is highlighted
  @how: <showcurrent>true
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>5</presentations>
      <order>sequential</order>
      <intervals count="3">
        <interval element="button1" number="1"/>
        <interval element="button2" number="2"/>
        <interval element="button3" number="3"/>
      </intervals>
    </parameters>
    <trials>
      <trial id="trial1">
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
        <standard id="standard1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">false</feedback>
      <showcurrent>true</showcurrent>
    </reinforcement>
    <screen id="screen1">
      <gridLayout id="main_layout" width="3" height="1">
        <button x="1" id="button1" y="1">
          <text>1</text>
        </button>
        <button x="2" id="button2" y="1">
          <text>1</text>
        </button>
        <button x="3" id="button3" y="1">
          <text>1</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="noisedata">
      <device>wavdevice</device>
      <file>ruisje.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <stimulus id="standard1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata"/>
      </datablocks>
    </stimulus>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
