<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">

 <!-- @doc
  @what:
  @description:
  @how:
  -->

 <!--
  Regression test for ADP (cfr Apex 2)
  1. Sequential

  Input sequence:

  Expected output:
  one of the following:
  noise bouwjaar noise
  bouwjaar noise noise
  noise noise bouwjaar

  adaptive procedure

  Expected answer:
  some correct
    -->

 <procedure xsi:type="apex:adaptiveProcedure">
  <parameters>
   <presentations>10</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <intervals count="3">
    <interval element="button1" number="1"/>
    <interval element="button2" number="2"/>
    <interval element="button3" number="3"/>
   </intervals>
   <nUp>1</nUp>
   <nDown>1</nDown>
   <adapt_parameter>snr</adapt_parameter>
   <start_value>3</start_value>
   <stop_after_type>reversals</stop_after_type>
   <stop_after>4</stop_after>
   <larger_is_easier>true</larger_is_easier>
   <stepsizes>
    <stepsize begin="0" size="2"/>
    <stepsize begin="2" size="1"/>
   </stepsizes>
  </parameters>
  <trials>
   <trial id="trial1">
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
    <stimulus id="stimulus2"/>
    <stimulus id="stimulus3"/>
    <stimulus id="stimulus4"/>
    <stimulus id="stimulus5"/>
    <standard id="standard1"/>
   </trial>
   <!--trial id="trial2" >
        <screen id="screen1" />
        <stimulus id="stimulus2" />
        <standard id="standard1"/>
      </trial-->
  </trials>
 </procedure>

 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="1500">true</feedback>
   <showcurrent>true</showcurrent>
   <feedbackplugin name="ledfeedback">
    <parameter name="button1">1</parameter>
    <parameter name="button2">2</parameter>
    <parameter name="button3">3</parameter>
   </feedbackplugin>
  </reinforcement>
  <screen id="screen1">
   <gridLayout width="3" height="2" id="main_layout">
    <label id="l1" row="1" col="1">
     <text>correct answer:</text>
    </label>
    <answerlabel id="al" row="1" col="2"/>
    <button id="button1" row="2" col="1">
     <text>eerste</text>
    </button>
    <button id="button2" row="2" col="2">
     <text>tweede</text>
    </button>
    <button id="button3" row="2" col="3">
     <text>derde</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
    <button id="button2"/>
    <button id="button3"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>

 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
  <datablock id="rawdata2">
   <device>wavdevice</device>
   <uri>wd2.wav</uri>
  </datablock>
  <datablock id="rawdata3">
   <device>wavdevice</device>
   <uri>wd3.wav</uri>
  </datablock>
  <datablock id="rawdata4">
   <device>wavdevice</device>
   <uri>wd4.wav</uri>
  </datablock>
  <datablock id="rawdata5">
   <device>wavdevice</device>
   <uri>wd5.wav</uri>
  </datablock>
  <datablock id="noisedata">
   <device>wavdevice</device>
   <uri>ruisje.wav</uri>
  </datablock>
 </datablocks>

 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>512</buffersize>
  </device>
 </devices>

 <filters/>

 <stimuli>
  <fixed_parameters>
   <parameter id="snr"/>
  </fixed_parameters>
  <stimulus id="standard1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="noisedata"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">20</parameter>
   </fixedParameters>
  </stimulus>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">1</parameter>
   </fixedParameters>
  </stimulus>
  <stimulus id="stimulus2">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata2"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">2</parameter>
   </fixedParameters>
  </stimulus>
  <stimulus id="stimulus3">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata3"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">3</parameter>
   </fixedParameters>
  </stimulus>
  <stimulus id="stimulus4">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata4"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">4</parameter>
   </fixedParameters>
  </stimulus>
  <stimulus id="stimulus5">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata5"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters>
    <parameter id="snr">5</parameter>
   </fixedParameters>
  </stimulus>
 </stimuli>

 <connections/>

</apex:apex>
