<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">

 <!-- @doc
  @what: highlighted stimulus + feedback with picture and highlighting for multiple stimuli
  @description: The currently playing stimulus/button is highlighted. When clicking a button, a feedback picture (thumb up or down) is shown in the right panel and the correct button is highlighted.
  @how: <showcurrent> true, <feedback> true
  -->

 <procedure xsi:type="apex:constantProcedure">
  <parameters>
   <presentations>5</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <intervals count="3">
    <interval element="button1" number="1"/>
    <interval element="button2" number="2"/>
    <interval element="button3" number="3"/>
   </intervals>
  </parameters>
  <trials>
   <trial id="trial1">
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
    <standard id="standard1"/>
   </trial>
  </trials>
 </procedure>

 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="1000">true</feedback>
   <showcurrent>true</showcurrent>
  </reinforcement>
  <screen id="screen1">
   <gridLayout width="3" height="1" id="main_layout">
    <button id="button1" x="1" y="1">
     <text>1</text>
    </button>
    <button id="button2" x="2" y="1">
     <text>1</text>
    </button>
    <button id="button3" x="3" y="1">
     <text>1</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
    <button id="button2"/>
    <button id="button3"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>

 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
  <datablock id="noisedata">
   <device>wavdevice</device>
   <uri>ruisje.wav</uri>
  </datablock>
 </datablocks>

 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>512</buffersize>
  </device>
 </devices>

 <filters/>

 <stimuli>
  <stimulus id="standard1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="noisedata"/>
   </datablocks>
   <variableParameters/>
  </stimulus>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
  </stimulus>
 </stimuli>

 <connections/>

</apex:apex>
