<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.4/experiment" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.4/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.4/experiment.xsd" version="1">
  <!-- @doc
  @what: feedback with picture and highlighting for multiple stimuli
  @description: When clicking a button, a feedback picture (thumb up or down) is shown in the right panel and the correct button is highlighted.
  @how: <feedback> true
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>5</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <intervals count="3">
        <interval element="button1" number="1"/>
        <interval element="button2" number="2"/>
        <interval element="button3" number="3"/>
      </intervals>
    </parameters>
    <trials>
      <trial id="trial1">
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
        <standard id="standard1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="1000">true</feedback>
      <showcurrent>false</showcurrent>
    </reinforcement>
    <screen id="screen1">
      <gridLayout width="3" height="1" id="main_layout">
        <button x="1" y="1" id="button1">
          <text>1</text>
        </button>
        <button x="2" y="1" id="button2">
          <text>1</text>
        </button>
        <button x="3" y="1" id="button3">
          <text>1</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button1"/>
        <button id="button2"/>
        <button id="button3"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="noisedata">
      <device>wavdevice</device>
      <file>ruisje.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <stimulus id="standard1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="noisedata"/>
      </datablocks>
      <variableParameters/>
    </stimulus>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
