<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">

 <!-- @doc
  @what: feedback without highlighting
  @description: When clicking a button, a feedback picture (thumb up or down) is shown in the right panel and NO elements are highlighted.
  @how: <feedback_on>: none
  -->

 <procedure xsi:type="apex:constantProcedure">
  <parameters>
   <presentations>5</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button_correct</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>

 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="1000">true</feedback>
   <feedback_on>none</feedback_on>
  </reinforcement>
  <screen id="screen1">
   <gridLayout width="2" height="1" id="main_layout">
    <button id="button_correct" x="1" y="1">
     <text>1</text>
    </button>
    <button id="button_wrong" x="2" y="1">
     <text>2</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button_correct"/>
    <button id="button_wrong"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>

 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>

 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>512</buffersize>
  </device>
 </devices>

 <filters/>

 <stimuli>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
  </stimulus>
 </stimuli>

 <connections/>

</apex:apex>
