<?xml version='1.0' encoding='UTF-8'?>
<apex:apex version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/4.0.0/experiment" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/4.0.0/experiment https://exporl.med.kuleuven.be/apex/schemas/4.0.0/experiment.xsd">
  <!-- @doc
  @what: feedback with picture and highlighting
  @description: When clicking a button, a feedback picture (thumb up or down) is shown in the right panel and the correct button is highlighted.
  @how: <feedback> true
  -->
  <procedure xsi:type="apex:constantProcedure">
    <parameters>
      <presentations>5</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>button_correct</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="1000">true</feedback>
    </reinforcement>
    <screen id="screen1">
      <gridLayout height="1" width="2" id="main_layout">
        <button id="button_correct" x="1" y="1">
          <text>1</text>
        </button>
        <button id="button_wrong" x="2" y="1">
          <text>2</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="button_correct"/>
        <button id="button_wrong"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
    </stimulus>
  </stimuli>
  <connections/>
</apex:apex>
