<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">

 <!-- @doc
  @what: shows how to use a stopbutton & repeatbutton
  @description: A red stopbutton and a repeatbutton are displayed on the screen, just above the progressbar. When clicking the stopbutton, all output is immediately stopped & apex is shut down. When clicking the repeatbutton, the last stimulus is repeated.
  Warning:  currently, you can't have a repeat and stop button together!
  @how: <stopbutton> & <repeatbutton>
  -->

 <procedure xsi:type="apex:constantProcedure">
  <parameters>
   <presentations>1</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
   <trial id="trial2">
    <answer>button2</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus2"/>
   </trial>
   <trial id="trial3">
    <answer>button3</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus3"/>
   </trial>
   <trial id="trial4">
    <answer>button4</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus4"/>
   </trial>
   <trial id="trial5">
    <answer>button5</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus5"/>
   </trial>
   <trial id="trial6">
    <answer>button6</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus6"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <general>
   <stopbutton>true</stopbutton>
   <repeatbutton>true</repeatbutton>
  </general>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">true</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout width="3" height="2" id="main_layout">
    <button x="1" id="button1" y="1">
     <text>1</text>
    </button>
    <button x="2" id="button2" y="1">
     <text>2</text>
    </button>
    <button x="3" id="button3" y="1">
     <text>3</text>
    </button>
    <button x="1" id="button4" y="2">
     <text>4</text>
    </button>
    <button x="2" id="button5" y="2">
     <text>5</text>
    </button>
    <button x="3" id="button6" y="2">
     <text>6</text>
    </button>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
    <button id="button2"/>
    <button id="button3"/>
    <button id="button4"/>
    <button id="button5"/>
    <button id="button6"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
  <datablock id="rawdata2">
   <device>wavdevice</device>
   <uri>wd2.wav</uri>
  </datablock>
  <datablock id="rawdata3">
   <device>wavdevice</device>
   <uri>wd3.wav</uri>
  </datablock>
  <datablock id="rawdata4">
   <device>wavdevice</device>
   <uri>wd4.wav</uri>
  </datablock>
  <datablock id="rawdata5">
   <device>wavdevice</device>
   <uri>wd5.wav</uri>
  </datablock>
  <datablock id="rawdata6">
   <device>wavdevice</device>
   <uri>wd6.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device xsi:type="apex:wavDeviceType" id="wavdevice">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>512</buffersize>
  </device>
 </devices>
 <filters/>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
  <stimulus id="stimulus2">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata2"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
  <stimulus id="stimulus3">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata3"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
  <stimulus id="stimulus4">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata4"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
  <stimulus id="stimulus5">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata5"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
  <stimulus id="stimulus6">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata6"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections/>
 <general>
  <exitafter>true</exitafter>
 </general>
</apex:apex>
