<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">

  <!-- @doc
  @what: shows how to change background and font color of a label/button
  @description: screen shows different labels/buttons with a different background color or font color
  @how: <bgcolor> changes the background color, <fgcolor> changes the font color
  -->

 <procedure xsi:type="apex:constantProcedure">
  <parameters>
   <presentations>1</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="screen1"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>

 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">true</feedback>
  </reinforcement>
  <screen id="screen1">
   <gridLayout width="1" height="2">
    <label x="1" id="uitleg" y="1">
     <bgcolor>tomato</bgcolor>
     <text>Isn't this background color nice?</text>
    </label>
    <gridLayout width="3" height="1" x="1" y="2">
     <button x="1" id="button1" y="1">
      <fgcolor>green</fgcolor>
      <text>green font color</text>
     </button>
     <button x="2" id="button2" y="1">
      <fgcolor>blue</fgcolor>
      <text>blue font color</text>
     </button>
     <button x="3" id="button3" y="1">
      <fgcolor>pink</fgcolor>
      <text>pink font color</text>
     </button>
    </gridLayout>
   </gridLayout>
   <buttongroup id="buttongroup1">
    <button id="button1"/>
   </buttongroup>
   <default_answer_element>buttongroup1</default_answer_element>
  </screen>
 </screens>

 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>

 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain>0</gain>
   <samplerate>44100</samplerate>
   <buffersize>512</buffersize>
  </device>
 </devices>

 <filters/>

 <stimuli>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
  </stimulus>
 </stimuli>

 <connections/>

</apex:apex>
