<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.4/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.4/experiment.xsd" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.4/experiment" version="1" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
  <!-- @doc
  @what: example of screen layout with pictures
  @description: Screen shows 4 pictures, after hearing a stimulus you should click one
  @how: <picture>
  -->
  <procedure xsi:type="apex:trainingProcedure">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
      <corrector xsi:type="apex:isequal"/>
    </parameters>
    <trials>
      <trial id="trial1">
        <answer>picture_1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus1"/>
      </trial>
      <trial id="trial2">
        <answer>picture_2</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus2"/>
      </trial>
      <trial id="trial3">
        <answer>picture_3</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus3"/>
      </trial>
      <trial id="trial4">
        <answer>picture_4</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus4"/>
      </trial>
    </trials>
  </procedure>
  <screens>
    <prefix>../pictures</prefix>
    <reinforcement>
      <progressbar>true</progressbar>
      <feedback length="300">true</feedback>
    </reinforcement>
    <style>&#xd;
      QLabel{ border: 1px solid red}&#xd;
    </style>
    <screen id="screen1">
      <gridLayout height="2" width="2">
        <picture x="1" y="1" id="picture_1">
          <file>high.png</file>
        </picture>
        <picture x="2" y="1" id="picture_2">
          <file>wide.png</file>
        </picture>
        <picture x="1" y="2" id="picture_3">
          <file>wide.png</file>
        </picture>
        <picture x="2" y="2" id="picture_4">
          <file>high.png</file>
        </picture>
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="picture_1"/>
        <button id="picture_2"/>
        <button id="picture_3"/>
        <button id="picture_4"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>
  <datablocks>
    <prefix>../stimuli</prefix>
    <datablock id="rawdata1">
      <device>wavdevice</device>
      <file>wd1.wav</file>
    </datablock>
    <datablock id="rawdata2">
      <device>wavdevice</device>
      <file>wd2.wav</file>
    </datablock>
    <datablock id="rawdata3">
      <device>wavdevice</device>
      <file>wd3.wav</file>
    </datablock>
    <datablock id="rawdata4">
      <device>wavdevice</device>
      <file>wd4.wav</file>
    </datablock>
  </datablocks>
  <devices>
    <device xsi:type="apex:wavDeviceType" id="wavdevice">
      <driver>portaudio</driver>
      <card>interactive</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>44100</samplerate>
      <buffersize>512</buffersize>
    </device>
  </devices>
  <filters/>
  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata1"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus2">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata2"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus3">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata3"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
    <stimulus id="stimulus4">
      <description>Eenvoudige teststimulus</description>
      <datablocks>
        <datablock id="rawdata4"/>
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>
  <connections>
    <connection>
      <from>
        <id>_ALL_</id>
        <channel>0</channel>
      </from>
      <to>
        <id>wavdevice</id>
        <channel>0</channel>
      </to>
    </connection>
  </connections>
</apex:apex>
