<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:apex="http://med.kuleuven.be/exporl/apex/3.1.1/experiment" version="1" xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.1.1/experiment https://exporl.med.kuleuven.be/apex/schemas/3.1.1/experiment.xsd">
 <!-- @doc
  @what: Demonstrate the misapplication of a screen generated by javascript
  @description: The screen is not generated in this experiment because the script source is invalid. You will get an error message when you try to open the experiment.
  @how: script source refers to <general> instead of the script itself. It should be: <script source="screengenerator-library"/> in <screens> OR <scriptlibrary>screengenerator-library.js</scriptlibrary> in <general>
 -->
 <procedure xsi:type="apex:constantProcedure">
  <parameters>
   <presentations>1</presentations>
   <skip>0</skip>
   <order>sequential</order>
   <corrector xsi:type="apex:isequal"/>
  </parameters>
  <trials>
   <trial id="trial1">
    <answer>button1</answer>
    <screen id="simplescreen2"/>
    <stimulus id="stimulus1"/>
   </trial>
  </trials>
 </procedure>
 <screens>
  <reinforcement>
   <progressbar>true</progressbar>
   <feedback length="300">true</feedback>
   <showcurrent>false</showcurrent>
  </reinforcement>
  <pluginscreens>
   <script source="general"/>
   <parameter name="number">3</parameter>
   <parameter name="string">string</parameter>
   <parameter name="id">simplescreen2</parameter>
  </pluginscreens>
 </screens>
 <datablocks>
  <uri_prefix>../stimuli</uri_prefix>
  <datablock id="rawdata1">
   <device>wavdevice</device>
   <uri>wd1.wav</uri>
  </datablock>
 </datablocks>
 <devices>
  <device id="wavdevice" xsi:type="apex:wavDeviceType">
   <driver>portaudio</driver>
   <card>interactive</card>
   <channels>2</channels>
   <gain channel="0">-50</gain>
   <samplerate>44100</samplerate>
   <buffersize>4096</buffersize>
  </device>
 </devices>
 <filters/>
 <stimuli>
  <fixed_parameters/>
  <stimulus id="stimulus1">
   <description>Eenvoudige teststimulus</description>
   <datablocks>
    <datablock id="rawdata1"/>
   </datablocks>
   <variableParameters/>
   <fixedParameters/>
  </stimulus>
 </stimuli>
 <connections/>
 <general>
  <scriptlibrary>screengenerator-library.js</scriptlibrary>
 </general>
</apex:apex>
