<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://www.kuleuven.be/exporl/Lab/Apex ../../../../Checkouts/apex3/trunk/apex/schemas/apex-schema.xsd"
 xmlns:apex="http://www.kuleuven.be/exporl/Lab/Apex"
 version="1">

  <procedure xsi:type="apex:trainingProcedureType">
    <parameters>
      <presentations>10</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>

    <trials>
      <trial id="trial1" >
        <answer>correct</answer>
        <screen id="screen1" />
        <stimulus id="stimulus1" />
      </trial>
    </trials>
  </procedure>

  <corrector xsi:type="apex:isequal"/>

  <screens>
    <reinforcement>
      <progressbar>false</progressbar>
      <feedback>false</feedback>
    </reinforcement>
    <screen id="screen1" >
      <gridLayout height="2" width="2" id="answer_layout" x="1" y="2">
        <button x="1" y="1" id="correct">
          <text>OK</text>
        </button>
       
      </gridLayout>
      <buttongroup id="buttongroup1">
        <button id="correct"/>
      </buttongroup>
      <default_answer_element>buttongroup1</default_answer_element>
    </screen>
  </screens>

  <datablocks>
    <datablock id="wd1">
      <device>soundcard</device>
      <uri>preempauditec16000.wav</uri>
    </datablock>
  </datablocks>

  <devices>
    <master>soundcard</master>
    <device id="soundcard" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain>0</gain>
      <samplerate>16000</samplerate>
      <buffersize>4096</buffersize>
    </device>
  </devices>

  <filters>
    <filter id="fade" xsi:type="apex:pluginfilter">
        <device>soundcard</device>
        <channels>2</channels>
        <continuous>false</continuous>
        <plugin>fade</plugin>
        <parameter id="fadein" name="fadein">3.0</parameter>
        <parameter id="fadeout" name="fadeout">5.0</parameter>
    </filter>
  </filters>

  <stimuli>
    <fixed_parameters/>
    <stimulus id="stimulus1" >
      <description>Eenvoudige teststimulus</description>
      <datablocks>
         <datablock id="wd1" />
      </datablocks>
      <variableParameters/>
      <fixedParameters/>
    </stimulus>
  </stimuli>

<connections>
  <connection>
    <from><id>wd1</id><channel>0</channel></from>
    <to><id>fade</id><channel>0</channel></to>
  </connection>
  <connection>
    <from><id>fade</id><channel>0</channel></from>
    <to><id>soundcard</id><channel>0</channel></to>
  </connection>
</connections>

</apex:apex>


